CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Desktop/PCP_lambda/load_data_csv/20200211_6W_CP151A2
    Name of the file:2_ApplyIllum_forCP.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:Ch1
    Name the output image:CorrCh1
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:Ch2
    Name the output image:CorrCh2
    Select the illumination function:IllumWGA
    Select how the illumination function is applied:Divide
    Select the input image:Ch3
    Name the output image:CorrCh3
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:Ch4
    Name the output image:CorrCh4
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:Ch0
    Name the output image:CorrCh0
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide

ImageMath:[module_num:3|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ClippedCorrCh1
    Image or measurement?:Image
    Select the first image:CorrCh1
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:4|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ClippedCorrCh2
    Image or measurement?:Image
    Select the first image:CorrCh2
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:5|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ClippedCorrCh3
    Image or measurement?:Image
    Select the first image:CorrCh3
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:6|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ClippedCorrCh4
    Image or measurement?:Image
    Select the first image:CorrCh4
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:7|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ClippedCorrCh0
    Image or measurement?:Image
    Select the first image:CorrCh0
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:ClippedCorrCh1
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ch1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Site_\g<Series>_CorrCh1
    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:ClippedCorrCh2
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ch1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Site_\g<Series>_CorrCh2
    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:ClippedCorrCh3
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ch1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Site_\g<Series>_CorrCh3
    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:ClippedCorrCh4
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ch1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Site_\g<Series>_CorrCh4
    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:ClippedCorrCh0
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ch0
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Site_\g<Series>_CorrCh0
    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:CorrCh0
    Name the primary objects to be identified:ConfluentRegions
    Typical diameter of objects, in pixel units (Min,Max):500,5000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:2
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,1.0
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
MaskImage:[module_num:14|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
    Select the input image:ClippedCorrCh0
    Name the output image:MaskedDAPI
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

MaskImage:[module_num:15|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
    Select the input image:ClippedCorrCh1
    Name the output image:MaskedAGP
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:MaskedDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:8
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:17|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notes:['Upper bound set on threshold based on site thresholds across the whole well from CP074A and CP074B']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:MaskedAGP
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:2
    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0.005,1
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:19|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:F:\
    Cluster root path:/home/ubuntu/bucket/projects/2018_11_20_Periscope_Calico/
