CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Desktop/PCP_lambda/load_data_csv/20200211_6W_CP151A2
    Name of the file:1_Illum_forCP.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate
    Rescale intensities?:Yes

Resize:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:DownsampledDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:3|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
    Select the input image:DownsampledDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:4|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
    Select the input image:IllumDNA
    Name the output image:UpsampledIllumDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:4
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:5|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
    Select the input image:OrigER
    Name the output image:DownsampledER
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DownsampledER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:7|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
    Select the input image:IllumER
    Name the output image:UpsampledIllumER
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:4
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:8|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
    Select the input image:OrigPhalloidin
    Name the output image:DownsampledPhalloidin
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:DownsampledPhalloidin
    Name the output image:IllumPhalloidin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:10|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
    Select the input image:IllumPhalloidin
    Name the output image:UpsampledIllumPhalloidin
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:4
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:11|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
    Select the input image:OrigMito
    Name the output image:DownsampledMito
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:12|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
    Select the input image:DownsampledMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:13|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
    Select the input image:IllumMito
    Name the output image:UpsampledIllumMito
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:4
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:14|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
    Select the input image:OrigWGA
    Name the output image:DownsampledWGA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:15|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
    Select the input image:DownsampledWGA
    Name the output image:IllumWGA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:16|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
    Select the input image:IllumWGA
    Name the output image:UpsampledIllumWGA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:4
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    Interpolation method:Bilinear
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    Additional image count:0

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumPhalloidin
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumPhalloidin
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumDNA
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumDNA
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumER
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumER
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumMito
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumMito
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumWGA
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumWGA
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:22|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:F:\
    Cluster root path:/home/ubuntu/bucket/projects/2018_11_20_Periscope_Calico/
