CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|Downloads
    Name of the file:load_data_pipeline2.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Site,Well
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigCOXIV
    Name the output image:CorrCOXIV
    Select the illumination function:IllumCOXIV
    Select how the illumination function is applied:Divide
    Select the input image:OrigCalnexin
    Name the output image:CorrCalnexin
    Select the illumination function:IllumCalnexin
    Select how the illumination function is applied:Divide
    Select the input image:OrigCatalase
    Name the output image:CorrCatalase
    Select the illumination function:IllumCatalase
    Select how the illumination function is applied:Divide
    Select the input image:OrigDNA_round0
    Name the output image:CorrDNA_round0
    Select the illumination function:IllumDNA_round0
    Select how the illumination function is applied:Divide
    Select the input image:OrigDNA_round1
    Name the output image:CorrDNA_round1
    Select the illumination function:IllumDNA_round1
    Select how the illumination function is applied:Divide
    Select the input image:OrigDNA_round2
    Name the output image:CorrDNA_round2
    Select the illumination function:IllumDNA_round2
    Select how the illumination function is applied:Divide
    Select the input image:OrigDNA_round3
    Name the output image:CorrDNA_round3
    Select the illumination function:IllumDNA_round3
    Select how the illumination function is applied:Divide
    Select the input image:OrigG3BP1
    Name the output image:CorrG3BP1
    Select the illumination function:IllumG3BP1
    Select how the illumination function is applied:Divide
    Select the input image:OrigGM130
    Name the output image:CorrGM130
    Select the illumination function:IllumGM130
    Select how the illumination function is applied:Divide
    Select the input image:OrigGolgin97
    Name the output image:CorrGolgin97
    Select the illumination function:IllumGolgin97
    Select how the illumination function is applied:Divide
    Select the input image:OrigLAMP1
    Name the output image:CorrLAMP1
    Select the illumination function:IllumLAMP1
    Select how the illumination function is applied:Divide
    Select the input image:OrigPhalloidin
    Name the output image:CorrPhalloidin
    Select the illumination function:IllumPhalloidin
    Select how the illumination function is applied:Divide
    Select the input image:OrigSyto9
    Name the output image:CorrSyto9
    Select the illumination function:IllumSyto9
    Select how the illumination function is applied:Divide
    Select the input image:OrigTDP43
    Name the output image:CorrTDP43
    Select the illumination function:IllumTDP43
    Select how the illumination function is applied:Divide
    Select the input image:Origbtubulin
    Name the output image:Corrbtubulin
    Select the illumination function:Illumbtubulin
    Select how the illumination function is applied:Divide
    Select the input image:OrigP65NFkb
    Name the output image:Corrp65NFkb
    Select the illumination function:IllumP65NFkb
    Select how the illumination function is applied:Divide
    Select the input image:OrigPRSPS6
    Name the output image:CorrPRSPS6
    Select the illumination function:IllumPRSPS6
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Align:[module_num:3|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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:CorrDNA_round0
    Name the first output image:AlignedRed
    Select the second input image:CorrDNA_round1
    Name the second output image:AlignedDNA_round1
    Select the additional image:CorrCatalase
    Name the output image:AlignedCatalase
    Select how the alignment is to be applied:Similarly
    Select the additional image:Corrbtubulin
    Name the output image:Alignedbtubulin
    Select how the alignment is to be applied:Similarly
    Select the additional image:CorrCalnexin
    Name the output image:AlignedCalnexin
    Select how the alignment is to be applied:Similarly
    Select the additional image:Corrp65NFkb
    Name the output image:AlignedP65NFkb
    Select how the alignment is to be applied:Similarly

Align:[module_num:4|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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:CorrDNA_round0
    Name the first output image:AlignedRed
    Select the second input image:CorrDNA_round2
    Name the second output image:AlignedDNA_round2
    Select the additional image:CorrCOXIV
    Name the output image:AlignedCOXIV
    Select how the alignment is to be applied:Similarly
    Select the additional image:CorrGolgin97
    Name the output image:AlignedGolgin97
    Select how the alignment is to be applied:Similarly
    Select the additional image:CorrPRSPS6
    Name the output image:AlignedPRSPS6
    Select how the alignment is to be applied:Similarly
    Select the additional image:CorrLAMP1
    Name the output image:AlignedLAMP1
    Select how the alignment is to be applied:Similarly

Align:[module_num:5|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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:CorrDNA_round0
    Name the first output image:AlignedRed
    Select the second input image:CorrDNA_round3
    Name the second output image:AlignedDNA_round3
    Select the additional image:CorrSyto9
    Name the output image:AlignedSyto9
    Select how the alignment is to be applied:Similarly
    Select the additional image:CorrTDP43
    Name the output image:AlignedTDP43
    Select how the alignment is to be applied:Similarly
    Select the additional image:CorrG3BP1
    Name the output image:AlignedG3BP1
    Select how the alignment is to be applied:Similarly
    Select the additional image:CorrGM130
    Name the output image:AlignedGM130
    Select how the alignment is to be applied:Similarly

MeasureColocalization:[module_num:6|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
    Select images to measure:AlignedDNA_round1, AlignedDNA_round2, AlignedDNA_round3, CorrDNA_round0
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:No
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

FlagImage:[module_num:7|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
    Hidden:1
    Hidden:3
    Name the flag's category:Metadata
    Name the flag:AlignmentFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_AlignedDNA_round1_CorrDNA_round0
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_AlignedDNA_round2_CorrDNA_round0
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_AlignedDNA_round3_CorrDNA_round0
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:CorrDNA_round0
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrDNA
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:CorrPhalloidin
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrPhalloidin
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:AlignedCOXIV
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrCOXIV
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:AlignedCalnexin
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrCalnexin
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:AlignedCatalase
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrCatalase
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:AlignedG3BP1
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrG3BP1
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:AlignedGM130
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrGM130
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:AlignedGolgin97
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrGolgin-97
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:AlignedLAMP1
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrLAMP1
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:AlignedSyto9
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrSyto9
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:AlignedTDP43
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrTDP-43
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:Alignedbtubulin
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrTubulin
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:AlignedP65NFkb
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Corrp65
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:AlignedPRSPS6
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrpRPS6
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

IdentifyPrimaryObjects:[module_num:22|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
    Select the input image:CorrDNA_round0
    Name the primary objects to be identified:ConfluentRegions
    Typical diameter of objects, in pixel units (Min,Max):500,5000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskImage:[module_num:23|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
    Select the input image:CorrDNA_round0
    Name the output image:MaskedDAPI
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

MaskImage:[module_num:24|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
    Select the input image:Corrbtubulin
    Name the output image:MaskedTubulin
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:25|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
    Select the input image:MaskedDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:8
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:26|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notes:['']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:MaskedTubulin
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.34
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0005,1
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    Log transform before thresholding?:Yes
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:PaintingIllumApplication_
    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:28|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:F:\
    Cluster root path:/home/ubuntu/bucket/projects/2018_11_20_Periscope_Calico/
