CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:132
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|/Users/bcimini/Downloads
    Name of the file:load_data_pipeline6 (2).csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Site,Well
    Rescale intensities?:Yes

MeasureImageQuality:[module_num:2|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
CorrectIlluminationApply:[module_num:3|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
    Select the input image:Cycle01_OrigDNA
    Name the output image:Cycle01_CorrDNA
    Select the illumination function:Cycle01_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle02_OrigDNA
    Name the output image:Cycle02_CorrDNA
    Select the illumination function:Cycle02_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle03_OrigDNA
    Name the output image:Cycle03_CorrDNA
    Select the illumination function:Cycle03_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle04_OrigDNA
    Name the output image:Cycle04_CorrDNA
    Select the illumination function:Cycle04_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle05_OrigDNA
    Name the output image:Cycle05_CorrDNA
    Select the illumination function:Cycle05_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle06_OrigDNA
    Name the output image:Cycle06_CorrDNA
    Select the illumination function:Cycle06_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle07_OrigDNA
    Name the output image:Cycle07_CorrDNA
    Select the illumination function:Cycle07_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle08_OrigDNA
    Name the output image:Cycle08_CorrDNA
    Select the illumination function:Cycle08_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle09_OrigDNA
    Name the output image:Cycle09_CorrDNA
    Select the illumination function:Cycle09_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle10_OrigDNA
    Name the output image:Cycle10_CorrDNA
    Select the illumination function:Cycle10_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle11_OrigDNA
    Name the output image:Cycle11_CorrDNA
    Select the illumination function:Cycle11_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle12_OrigDNA
    Name the output image:Cycle12_CorrDNA
    Select the illumination function:Cycle12_IllumDNA
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:4|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
    Select the input image:Cycle01_OrigA
    Name the output image:Cycle01_CorrA
    Select the illumination function:Cycle01_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle02_OrigA
    Name the output image:Cycle02_CorrA
    Select the illumination function:Cycle02_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle03_OrigA
    Name the output image:Cycle03_CorrA
    Select the illumination function:Cycle03_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle04_OrigA
    Name the output image:Cycle04_CorrA
    Select the illumination function:Cycle04_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle05_OrigA
    Name the output image:Cycle05_CorrA
    Select the illumination function:Cycle05_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle06_OrigA
    Name the output image:Cycle06_CorrA
    Select the illumination function:Cycle06_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle07_OrigA
    Name the output image:Cycle07_CorrA
    Select the illumination function:Cycle07_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle08_OrigA
    Name the output image:Cycle08_CorrA
    Select the illumination function:Cycle08_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle09_OrigA
    Name the output image:Cycle09_CorrA
    Select the illumination function:Cycle09_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle10_OrigA
    Name the output image:Cycle10_CorrA
    Select the illumination function:Cycle10_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle11_OrigA
    Name the output image:Cycle11_CorrA
    Select the illumination function:Cycle11_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle12_OrigA
    Name the output image:Cycle12_CorrA
    Select the illumination function:Cycle12_IllumA
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:5|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
    Select the input image:Cycle01_OrigC
    Name the output image:Cycle01_CorrC
    Select the illumination function:Cycle01_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle02_OrigC
    Name the output image:Cycle02_CorrC
    Select the illumination function:Cycle02_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle03_OrigC
    Name the output image:Cycle03_CorrC
    Select the illumination function:Cycle03_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle04_OrigC
    Name the output image:Cycle04_CorrC
    Select the illumination function:Cycle04_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle05_OrigC
    Name the output image:Cycle05_CorrC
    Select the illumination function:Cycle05_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle06_OrigC
    Name the output image:Cycle06_CorrC
    Select the illumination function:Cycle06_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle07_OrigC
    Name the output image:Cycle07_CorrC
    Select the illumination function:Cycle07_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle08_OrigC
    Name the output image:Cycle08_CorrC
    Select the illumination function:Cycle08_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle09_OrigC
    Name the output image:Cycle09_CorrC
    Select the illumination function:Cycle09_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle10_OrigC
    Name the output image:Cycle10_CorrC
    Select the illumination function:Cycle10_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle11_OrigC
    Name the output image:Cycle11_CorrC
    Select the illumination function:Cycle11_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle12_OrigC
    Name the output image:Cycle12_CorrC
    Select the illumination function:Cycle12_IllumC
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:6|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
    Select the input image:Cycle01_OrigG
    Name the output image:Cycle01_CorrG
    Select the illumination function:Cycle01_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle02_OrigG
    Name the output image:Cycle02_CorrG
    Select the illumination function:Cycle02_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle03_OrigG
    Name the output image:Cycle03_CorrG
    Select the illumination function:Cycle03_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle04_OrigG
    Name the output image:Cycle04_CorrG
    Select the illumination function:Cycle04_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle05_OrigG
    Name the output image:Cycle05_CorrG
    Select the illumination function:Cycle05_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle06_OrigG
    Name the output image:Cycle06_CorrG
    Select the illumination function:Cycle06_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle07_OrigG
    Name the output image:Cycle07_CorrG
    Select the illumination function:Cycle07_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle08_OrigG
    Name the output image:Cycle08_CorrG
    Select the illumination function:Cycle08_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle09_OrigG
    Name the output image:Cycle09_CorrG
    Select the illumination function:Cycle09_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle10_OrigG
    Name the output image:Cycle10_CorrG
    Select the illumination function:Cycle10_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle11_OrigG
    Name the output image:Cycle11_CorrG
    Select the illumination function:Cycle11_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle12_OrigG
    Name the output image:Cycle12_CorrG
    Select the illumination function:Cycle12_IllumG
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:7|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
    Select the input image:Cycle01_OrigT
    Name the output image:Cycle01_CorrT
    Select the illumination function:Cycle01_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle02_OrigT
    Name the output image:Cycle02_CorrT
    Select the illumination function:Cycle02_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle03_OrigT
    Name the output image:Cycle03_CorrT
    Select the illumination function:Cycle03_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle04_OrigT
    Name the output image:Cycle04_CorrT
    Select the illumination function:Cycle04_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle05_OrigT
    Name the output image:Cycle05_CorrT
    Select the illumination function:Cycle05_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle06_OrigT
    Name the output image:Cycle06_CorrT
    Select the illumination function:Cycle06_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle07_OrigT
    Name the output image:Cycle07_CorrT
    Select the illumination function:Cycle07_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle08_OrigT
    Name the output image:Cycle08_CorrT
    Select the illumination function:Cycle08_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle09_OrigT
    Name the output image:Cycle09_CorrT
    Select the illumination function:Cycle09_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle10_OrigT
    Name the output image:Cycle10_CorrT
    Select the illumination function:Cycle10_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle11_OrigT
    Name the output image:Cycle11_CorrT
    Select the illumination function:Cycle11_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle12_OrigT
    Name the output image:Cycle12_CorrT
    Select the illumination function:Cycle12_IllumT
    Select how the illumination function is applied:Divide

ImageMath:[module_num:8|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle01_DAPI
    Image or measurement?:Image
    Select the first image:Cycle01_CorrDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:9|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle01_G
    Image or measurement?:Image
    Select the first image:Cycle01_CorrG
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:10|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle01_T
    Image or measurement?:Image
    Select the first image:Cycle01_CorrT
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:11|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle01_A
    Image or measurement?:Image
    Select the first image:Cycle01_CorrA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:12|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle01_C
    Image or measurement?:Image
    Select the first image:Cycle01_CorrC
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:13|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle02_DAPI_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle02_CorrDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:14|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle02_G_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle02_CorrG
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:15|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle02_T_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle02_CorrT
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:16|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle02_A_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle02_CorrA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:17|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle02_C_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle02_CorrC
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:18|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle03_DAPI_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle03_CorrDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:19|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle03_G_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle03_CorrG
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:20|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle03_T_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle03_CorrT
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:21|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle03_A_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle03_CorrA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:22|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle03_C_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle03_CorrC
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:23|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle04_DAPI_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle04_CorrDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:24|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle04_G_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle04_CorrG
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:25|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle04_T_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle04_CorrT
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:26|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle04_A_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle04_CorrA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:27|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle04_C_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle04_CorrC
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:28|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle05_DAPI_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle05_CorrDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:29|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle05_G_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle05_CorrG
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:30|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle05_T_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle05_CorrT
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:31|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle05_A_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle05_CorrA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:32|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle05_C_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle05_CorrC
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:33|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle06_DAPI_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle06_CorrDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:34|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle06_G_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle06_CorrG
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:35|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle06_T_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle06_CorrT
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:36|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle06_A_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle06_CorrA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:37|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle06_C_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle06_CorrC
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:38|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle07_DAPI_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle07_CorrDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:39|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle07_G_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle07_CorrG
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:40|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle07_T_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle07_CorrT
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:41|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle07_A_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle07_CorrA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:42|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle07_C_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle07_CorrC
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:43|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle08_DAPI_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle08_CorrDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:44|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle08_G_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle08_CorrG
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:45|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle08_T_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle08_CorrT
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:46|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle08_A_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle08_CorrA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:47|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle08_C_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle08_CorrC
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:48|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle09_DAPI_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle09_CorrDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:49|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle09_G_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle09_CorrG
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:50|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle09_T_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle09_CorrT
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:51|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle09_A_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle09_CorrA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:52|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle09_C_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle09_CorrC
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:53|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle10_DAPI_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle10_CorrDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:54|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle10_G_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle10_CorrG
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:55|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle10_T_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle10_CorrT
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:56|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle10_A_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle10_CorrA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:57|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle10_C_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle10_CorrC
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:58|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle11_DAPI_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle11_CorrDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:59|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle11_G_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle11_CorrG
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:60|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle11_T_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle11_CorrT
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:61|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle11_A_PreAligned
    Image or measurement?:Image
    Select the first image:Cycle11_CorrA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:62|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle11_C_PreAligned
    Image or measurement?:Image
    Select the image:Cycle11_CorrC
    Multiply the image by:1.0
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    Image or measurement?:Image
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    Multiply the image by:1.0
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
ImageMath:[module_num:63|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle12_DAPI_PreAligned
    Image or measurement?:Image
    Select the image:Cycle12_CorrDNA
    Multiply the image by:1.0
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    Image or measurement?:Image
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    Multiply the image by:1.0
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
ImageMath:[module_num:64|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle12_G_PreAligned
    Image or measurement?:Image
    Select the image:Cycle12_CorrG
    Multiply the image by:1.0
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    Image or measurement?:Image
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    Multiply the image by:1.0
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
ImageMath:[module_num:65|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle12_T_PreAligned
    Image or measurement?:Image
    Select the image:Cycle12_CorrT
    Multiply the image by:1.0
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    Image or measurement?:Image
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    Multiply the image by:1.0
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
ImageMath:[module_num:66|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle12_A_PreAligned
    Image or measurement?:Image
    Select the image:Cycle12_CorrA
    Multiply the image by:1.0
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    Image or measurement?:Image
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    Multiply the image by:1.0
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
ImageMath:[module_num:67|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Cycle12_C_PreAligned
    Image or measurement?:Image
    Select the image:Cycle12_CorrC
    Multiply the image by:1.0
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    Image or measurement?:Image
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    Multiply the image by:1.0
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
Align:[module_num:68|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle02_DAPI_PreAligned
    Name the second output image:Cycle02_DAPI
    Select the additional image:Cycle02_A_PreAligned
    Name the output image:Cycle02_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle02_C_PreAligned
    Name the output image:Cycle02_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle02_G_PreAligned
    Name the output image:Cycle02_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle02_T_PreAligned
    Name the output image:Cycle02_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:69|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle03_DAPI_PreAligned
    Name the second output image:Cycle03_DAPI
    Select the additional image:Cycle03_A_PreAligned
    Name the output image:Cycle03_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle03_C_PreAligned
    Name the output image:Cycle03_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle03_G_PreAligned
    Name the output image:Cycle03_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle03_T_PreAligned
    Name the output image:Cycle03_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:70|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle04_DAPI_PreAligned
    Name the second output image:Cycle04_DAPI
    Select the additional image:Cycle04_A_PreAligned
    Name the output image:Cycle04_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle04_C_PreAligned
    Name the output image:Cycle04_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle04_G_PreAligned
    Name the output image:Cycle04_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle04_T_PreAligned
    Name the output image:Cycle04_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:71|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle05_DAPI_PreAligned
    Name the second output image:Cycle05_DAPI
    Select the additional image:Cycle05_A_PreAligned
    Name the output image:Cycle05_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle05_C_PreAligned
    Name the output image:Cycle05_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle05_G_PreAligned
    Name the output image:Cycle05_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle05_T_PreAligned
    Name the output image:Cycle05_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:72|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle06_DAPI_PreAligned
    Name the second output image:Cycle06_DAPI
    Select the additional image:Cycle06_A_PreAligned
    Name the output image:Cycle06_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle06_C_PreAligned
    Name the output image:Cycle06_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle06_G_PreAligned
    Name the output image:Cycle06_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle06_T_PreAligned
    Name the output image:Cycle06_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:73|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle07_DAPI_PreAligned
    Name the second output image:Cycle07_DAPI
    Select the additional image:Cycle07_A_PreAligned
    Name the output image:Cycle07_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle07_C_PreAligned
    Name the output image:Cycle07_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle07_G_PreAligned
    Name the output image:Cycle07_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle07_T_PreAligned
    Name the output image:Cycle07_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:74|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle08_DAPI_PreAligned
    Name the second output image:Cycle08_DAPI
    Select the additional image:Cycle08_A_PreAligned
    Name the output image:Cycle08_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle08_C_PreAligned
    Name the output image:Cycle08_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle08_G_PreAligned
    Name the output image:Cycle08_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle08_T_PreAligned
    Name the output image:Cycle08_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:75|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle09_DAPI_PreAligned
    Name the second output image:Cycle09_DAPI
    Select the additional image:Cycle09_A_PreAligned
    Name the output image:Cycle09_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle09_C_PreAligned
    Name the output image:Cycle09_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle09_G_PreAligned
    Name the output image:Cycle09_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle09_T_PreAligned
    Name the output image:Cycle09_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:76|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle10_DAPI_PreAligned
    Name the second output image:Cycle10_DAPI
    Select the additional image:Cycle10_A_PreAligned
    Name the output image:Cycle10_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle10_C_PreAligned
    Name the output image:Cycle10_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle10_G_PreAligned
    Name the output image:Cycle10_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle10_T_PreAligned
    Name the output image:Cycle10_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:77|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle11_DAPI_PreAligned
    Name the second output image:Cycle11_DAPI
    Select the additional image:Cycle11_A_PreAligned
    Name the output image:Cycle11_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle11_C_PreAligned
    Name the output image:Cycle11_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle11_G_PreAligned
    Name the output image:Cycle11_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle11_T_PreAligned
    Name the output image:Cycle11_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:78|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle12_DAPI_PreAligned
    Name the second output image:Cycle12_DAPI
    Select the additional image:Cycle12_A_PreAligned
    Name the output image:Cycle12_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle12_C_PreAligned
    Name the output image:Cycle12_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle12_G_PreAligned
    Name the output image:Cycle12_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle12_T_PreAligned
    Name the output image:Cycle12_T
    Select how the alignment is to be applied:Similarly

MeasureColocalization:[module_num:79|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
    Hidden:60
    Hidden:1
    Select an image to measure:Cycle01_DAPI
    Select an image to measure:Cycle02_DAPI
    Select an image to measure:Cycle03_DAPI
    Select an image to measure:Cycle04_DAPI
    Select an image to measure:Cycle05_DAPI
    Select an image to measure:Cycle06_DAPI
    Select an image to measure:Cycle07_DAPI
    Select an image to measure:Cycle08_DAPI
    Select an image to measure:Cycle09_DAPI
    Select an image to measure:Cycle10_DAPI
    Select an image to measure:Cycle11_DAPI
    Select an image to measure:Cycle12_DAPI
    Select an image to measure:Cycle01_A
    Select an image to measure:Cycle01_C
    Select an image to measure:Cycle01_G
    Select an image to measure:Cycle01_T
    Select an image to measure:Cycle02_A
    Select an image to measure:Cycle02_C
    Select an image to measure:Cycle02_G
    Select an image to measure:Cycle02_T
    Select an image to measure:Cycle03_A
    Select an image to measure:Cycle03_C
    Select an image to measure:Cycle03_G
    Select an image to measure:Cycle03_T
    Select an image to measure:Cycle04_A
    Select an image to measure:Cycle04_C
    Select an image to measure:Cycle04_G
    Select an image to measure:Cycle04_T
    Select an image to measure:Cycle05_A
    Select an image to measure:Cycle05_C
    Select an image to measure:Cycle05_G
    Select an image to measure:Cycle05_T
    Select an image to measure:Cycle06_A
    Select an image to measure:Cycle06_C
    Select an image to measure:Cycle06_G
    Select an image to measure:Cycle06_T
    Select an image to measure:Cycle07_A
    Select an image to measure:Cycle07_C
    Select an image to measure:Cycle07_G
    Select an image to measure:Cycle07_T
    Select an image to measure:Cycle08_A
    Select an image to measure:Cycle08_C
    Select an image to measure:Cycle08_G
    Select an image to measure:Cycle08_T
    Select an image to measure:Cycle09_A
    Select an image to measure:Cycle09_C
    Select an image to measure:Cycle09_G
    Select an image to measure:Cycle09_T
    Select an image to measure:Cycle10_A
    Select an image to measure:Cycle10_C
    Select an image to measure:Cycle10_G
    Select an image to measure:Cycle10_T
    Select an image to measure:Cycle11_A
    Select an image to measure:Cycle11_C
    Select an image to measure:Cycle11_G
    Select an image to measure:Cycle11_T
    Select an image to measure:Cycle12_A
    Select an image to measure:Cycle12_C
    Select an image to measure:Cycle12_G
    Select an image to measure:Cycle12_T
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Coloalization coefficients?:No
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No

FlagImage:[module_num:80|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
    Hidden:1
    Hidden:11
    Name the flag's category:Metadata
    Name the flag:Unaligned
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle02_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle03_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle04_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle05_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle06_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle07_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle08_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle09_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle10_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle11_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle12_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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
SaveImages:[module_num:81|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
    Select the type of image to save:Image
    Select the image to save:Cycle01_DAPI
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_DAPI
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:82|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
    Select the type of image to save:Image
    Select the image to save:Cycle01_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:83|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
    Select the type of image to save:Image
    Select the image to save:Cycle01_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:84|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
    Select the type of image to save:Image
    Select the image to save:Cycle01_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:85|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
    Select the type of image to save:Image
    Select the image to save:Cycle01_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:86|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
    Select the type of image to save:Image
    Select the image to save:Cycle02_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle02_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:87|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
    Select the type of image to save:Image
    Select the image to save:Cycle02_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle02_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:88|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
    Select the type of image to save:Image
    Select the image to save:Cycle02_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle02_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:89|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
    Select the type of image to save:Image
    Select the image to save:Cycle02_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle02_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:90|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
    Select the type of image to save:Image
    Select the image to save:Cycle03_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle03_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:91|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
    Select the type of image to save:Image
    Select the image to save:Cycle03_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle03_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:92|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
    Select the type of image to save:Image
    Select the image to save:Cycle03_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle03_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:93|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
    Select the type of image to save:Image
    Select the image to save:Cycle03_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle03_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:94|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
    Select the type of image to save:Image
    Select the image to save:Cycle04_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle04_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:95|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
    Select the type of image to save:Image
    Select the image to save:Cycle04_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle04_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:96|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
    Select the type of image to save:Image
    Select the image to save:Cycle04_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle04_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:97|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
    Select the type of image to save:Image
    Select the image to save:Cycle04_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle04_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:98|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
    Select the type of image to save:Image
    Select the image to save:Cycle05_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle05_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:99|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
    Select the type of image to save:Image
    Select the image to save:Cycle05_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle05_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:100|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
    Select the type of image to save:Image
    Select the image to save:Cycle05_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle05_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:101|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
    Select the type of image to save:Image
    Select the image to save:Cycle05_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle05_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:102|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
    Select the type of image to save:Image
    Select the image to save:Cycle06_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle06_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:103|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
    Select the type of image to save:Image
    Select the image to save:Cycle06_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle06_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:104|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
    Select the type of image to save:Image
    Select the image to save:Cycle06_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle06_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:105|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
    Select the type of image to save:Image
    Select the image to save:Cycle06_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle06_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:106|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
    Select the type of image to save:Image
    Select the image to save:Cycle07_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle07_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:107|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
    Select the type of image to save:Image
    Select the image to save:Cycle07_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle07_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:108|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
    Select the type of image to save:Image
    Select the image to save:Cycle07_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle07_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:109|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
    Select the type of image to save:Image
    Select the image to save:Cycle07_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle07_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:110|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
    Select the type of image to save:Image
    Select the image to save:Cycle08_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle08_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:111|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
    Select the type of image to save:Image
    Select the image to save:Cycle08_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle08_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:112|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
    Select the type of image to save:Image
    Select the image to save:Cycle08_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle08_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:113|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
    Select the type of image to save:Image
    Select the image to save:Cycle08_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle08_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:114|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
    Select the type of image to save:Image
    Select the image to save:Cycle09_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle09_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:115|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
    Select the type of image to save:Image
    Select the image to save:Cycle09_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle09_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:116|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
    Select the type of image to save:Image
    Select the image to save:Cycle09_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle09_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:117|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
    Select the type of image to save:Image
    Select the image to save:Cycle09_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle09_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:118|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
    Select the type of image to save:Image
    Select the image to save:Cycle10_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle10_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:119|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
    Select the type of image to save:Image
    Select the image to save:Cycle10_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle10_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:120|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
    Select the type of image to save:Image
    Select the image to save:Cycle10_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle10_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:121|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
    Select the type of image to save:Image
    Select the image to save:Cycle10_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle10_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:122|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
    Select the type of image to save:Image
    Select the image to save:Cycle11_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle11_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:123|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
    Select the type of image to save:Image
    Select the image to save:Cycle11_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle11_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:124|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
    Select the type of image to save:Image
    Select the image to save:Cycle11_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle11_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:125|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
    Select the type of image to save:Image
    Select the image to save:Cycle11_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle11_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:126|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
    Select the type of image to save:Image
    Select the image to save:Cycle12_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle12_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:127|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
    Select the type of image to save:Image
    Select the image to save:Cycle12_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle12_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:128|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
    Select the type of image to save:Image
    Select the image to save:Cycle12_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle12_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:129|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
    Select the type of image to save:Image
    Select the image to save:Cycle12_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle12_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:130|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:BarcodingApplication_
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:131|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Foci
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
CreateBatchFiles:[module_num:132|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:E:\
    Cluster root path:/home/ubuntu/bucket/projects/2018_11_20_Periscope_Calico/
    Local root path:C:\Users\Administrator\Desktop
    Cluster root path:/home/ubuntu/bucket/projects/2018_11_20_Periscope_Calico/workspace
