CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:60
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:Site_(?P<Site>[0-9]{1,3})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Plate>.*)_(?P<Well>.*)[\\/].*$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'CorrCycle08_A': u'Site', u'CorrCycle08_C': u'Site', u'CorrCycle08_G': u'Site', u'CorrCycle08_T': u'Site', u'Pre_Phalloidin': u'Site', u'CorrCycle10_G': u'Site', u'CorrCycle10_C': u'Site', u'CorrCycle12_T': u'Site', u'CorrCycle10_A': u'Site', u'CorrCycle12_A': u'Site', u'CorrCycle12_C': u'Site', u'CorrCycle10_T': u'Site', u'CorrCycle12_G': u'Site', u'CorrCycle06_C': u'Site', u'CorrCycle06_A': u'Site', u'CorrCycle06_G': u'Site', u'DAPI_Barcodes': u'Site', u'Pre_WGA': u'Site', u'CorrCycle06_T': u'Site', u'CorrCycle02_T': u'Site', u'CorrCycle04_G': u'Site', u'CorrCycle04_A': u'Site',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
    Image set matching method:Metadata
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    Assignments count:54
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "CorrCh0")
    Name to assign these images:Pre_DAPI_Painting
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "CorrCh2")
    Name to assign these images:Pre_WGA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "CorrCh4")
    Name to assign these images:Pre_ConA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "CorrCh3")
    Name to assign these images:Pre_Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "CorrCh1")
    Name to assign these images:Pre_Phalloidin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle01_DAPI")
    Name to assign these images:DAPI_Barcodes
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle01_A")
    Name to assign these images:CorrCycle01_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle02_A")
    Name to assign these images:CorrCycle02_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle03_A")
    Name to assign these images:CorrCycle03_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle04_A")
    Name to assign these images:CorrCycle04_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle05_A")
    Name to assign these images:CorrCycle05_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle06_A")
    Name to assign these images:CorrCycle06_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle07_A")
    Name to assign these images:CorrCycle07_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle08_A")
    Name to assign these images:CorrCycle08_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle09_A")
    Name to assign these images:CorrCycle09_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle10_A")
    Name to assign these images:CorrCycle10_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle01_C")
    Name to assign these images:CorrCycle01_C
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle02_C")
    Name to assign these images:CorrCycle02_C
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle03_C")
    Name to assign these images:CorrCycle03_C
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle04_C")
    Name to assign these images:CorrCycle04_C
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle05_C")
    Name to assign these images:CorrCycle05_C
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle06_C")
    Name to assign these images:CorrCycle06_C
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle07_C")
    Name to assign these images:CorrCycle07_C
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle08_C")
    Name to assign these images:CorrCycle08_C
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle09_C")
    Name to assign these images:CorrCycle09_C
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle10_C")
    Name to assign these images:CorrCycle10_C
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle01_G")
    Name to assign these images:CorrCycle01_G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle02_G")
    Name to assign these images:CorrCycle02_G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle03_G")
    Name to assign these images:CorrCycle03_G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle04_G")
    Name to assign these images:CorrCycle04_G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle05_G")
    Name to assign these images:CorrCycle05_G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle06_G")
    Name to assign these images:CorrCycle06_G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle07_G")
    Name to assign these images:CorrCycle07_G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle08_G")
    Name to assign these images:CorrCycle08_G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle09_G")
    Name to assign these images:CorrCycle09_G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle10_G")
    Name to assign these images:CorrCycle10_G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle01_T")
    Name to assign these images:CorrCycle01_T
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle02_T")
    Name to assign these images:CorrCycle02_T
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle03_T")
    Name to assign these images:CorrCycle03_T
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle04_T")
    Name to assign these images:CorrCycle04_T
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle05_T")
    Name to assign these images:CorrCycle05_T
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle06_T")
    Name to assign these images:CorrCycle06_T
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle07_T")
    Name to assign these images:CorrCycle07_T
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle08_T")
    Name to assign these images:CorrCycle08_T
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle09_T")
    Name to assign these images:CorrCycle09_T
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle10_T")
    Name to assign these images:CorrCycle10_T
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle11_A")
    Name to assign these images:CorrCycle11_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle11_C")
    Name to assign these images:CorrCycle11_C
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle11_G")
    Name to assign these images:CorrCycle11_G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle11_T")
    Name to assign these images:CorrCycle11_T
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle12_A")
    Name to assign these images:CorrCycle12_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle12_C")
    Name to assign these images:CorrCycle12_C
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle12_G")
    Name to assign these images:CorrCycle12_G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cycle12_T")
    Name to assign these images:CorrCycle12_T
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:Site
    Metadata category:Plate
    Metadata category:Well

Align:[module_num:5|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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:DAPI_Barcodes
    Name the first output image:AlignedRed
    Select the second input image:Pre_DAPI_Painting
    Name the second output image:DAPI_Painting
    Select the additional image:Pre_ConA
    Name the output image:ConA
    Select how the alignment is to be applied:Similarly
    Select the additional image:Pre_Mito
    Name the output image:Mito
    Select how the alignment is to be applied:Similarly
    Select the additional image:Pre_Phalloidin
    Name the output image:Phalloidin
    Select how the alignment is to be applied:Similarly
    Select the additional image:Pre_WGA
    Name the output image:WGA
    Select how the alignment is to be applied:Similarly

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DAPI_Painting
    Name the primary objects to be identified:ConfluentRegions
    Typical diameter of objects, in pixel units (Min,Max):500,5000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:2
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureImageAreaOccupied:[module_num:7|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:ConfluentRegions
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
CalculateMath:[module_num:8|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
    Name the output measurement:PercentConfluent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_ConfluentRegions
    Multiply the above operand by:100.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_TotalArea_ConfluentRegions
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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    How should the output value be rounded?:Not rounded
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
MaskImage:[module_num:9|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
    Select the input image:DAPI_Painting
    Name the output image:MaskedDAPI_Painting
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

MaskImage:[module_num:10|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
    Select the input image:Phalloidin
    Name the output image:MaskedPhalloidin
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:MaskedDAPI_Painting
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:8
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
ImageMath:[module_num:12|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
    Operation:None
    Raise the power of the result by:.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:SqrtMaskedDAPI
    Image or measurement?:Image
    Select the first image:MaskedDAPI_Painting
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifySecondaryObjects:[module_num:13|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notes:['Upper bound set on threshold based on site thresholds across the whole well from CP074A and CP074B']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:SqrtMaskedDAPI
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:2
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0808,1
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
ResizeObjects:[module_num:14|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
    Select the input object:ConfluentRegions
    Name the output object:ResizeConfluent
    Method:Factor
    Factor:0.50
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
ResizeObjects:[module_num:15|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
    Select the input object:Nuclei
    Name the output object:ResizeNuclei
    Method:Factor
    Factor:0.5
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
ResizeObjects:[module_num:16|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
    Select the input object:Cells
    Name the output object:ResizeCells
    Method:Factor
    Factor:0.5
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
IdentifyTertiaryObjects:[module_num:17|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ImageMath:[module_num:18|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notes:['A bleeds bad into C, T bleeds bad into G, C and G don’t bleed too badly']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
    Operation:Maximum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MaxOfAllBackSubCycles
    Image or measurement?:Image
    Select the first image:CorrCycle01_A
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CorrCycle01_C
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:CorrCycle01_G
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:CorrCycle01_T
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:CorrCycle02_A
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:CorrCycle02_C
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:CorrCycle02_G
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:CorrCycle02_T
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:CorrCycle03_A
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:CorrCycle03_C
    Multiply the tenth image by:1.0
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    Image or measurement?:Image
    Select the eleventh image:CorrCycle03_G
    Multiply the eleventh image by:1.0
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    Image or measurement?:Image
    Select the twelfth image:CorrCycle03_T
    Multiply the twelfth image by:1.0
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    Image or measurement?:Image
    Select the thirteenth image:CorrCycle04_A
    Multiply the thirteenth image by:1.0
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    Image or measurement?:Image
    Select the fourteenth image:CorrCycle04_C
    Multiply the fourteenth image by:1.0
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    Image or measurement?:Image
    Select the fifteenth image:CorrCycle04_G
    Multiply the fifteenth image by:1.0
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    Image or measurement?:Image
    Select the sixteenth image:CorrCycle04_T
    Multiply the sixteenth image by:1.0
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    Image or measurement?:Image
    Select the seventeenth image:CorrCycle05_A
    Multiply the seventeenth image by:1.0
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    Image or measurement?:Image
    Select the eighteenth image:CorrCycle05_C
    Multiply the eighteenth image by:1.0
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    Image or measurement?:Image
    Select the nineteenth image:CorrCycle05_G
    Multiply the nineteenth image by:1.0
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    Image or measurement?:Image
    Select the twentieth image:CorrCycle05_T
    Multiply the twentieth image by:1.0
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    Image or measurement?:Image
    Select the twenty-first image:CorrCycle06_A
    Multiply the twenty-first image by:1.0
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    Image or measurement?:Image
    Select the twenty-second image:CorrCycle06_C
    Multiply the twenty-second image by:1.0
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    Image or measurement?:Image
    Select the twenty-third image:CorrCycle06_G
    Multiply the twenty-third image by:1.0
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    Image or measurement?:Image
    Select the twenty-fourth image:CorrCycle06_T
    Multiply the twenty-fourth image by:1.0
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    Image or measurement?:Image
    Select the twenty-fifth image:CorrCycle07_A
    Multiply the twenty-fifth image by:1.0
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    Image or measurement?:Image
    Select the twenty-sixth image:CorrCycle07_C
    Multiply the twenty-sixth image by:1.0
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    Image or measurement?:Image
    Select the twenty-seventh image:CorrCycle07_G
    Multiply the twenty-seventh image by:1.0
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    Image or measurement?:Image
    Select the twenty-eighth image:CorrCycle07_T
    Multiply the twenty-eighth image by:1.0
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    Image or measurement?:Image
    Select the twenty-ninth image:CorrCycle08_A
    Multiply the twenty-ninth image by:1.0
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    Image or measurement?:Image
    Select the thirtieth image:CorrCycle08_C
    Multiply the thirtieth image by:1.0
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    Image or measurement?:Image
    Select the thirty-first image:CorrCycle08_G
    Multiply the thirty-first image by:1.0
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    Image or measurement?:Image
    Select the thirty-second image:CorrCycle08_T
    Multiply the thirty-second image by:1.0
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    Image or measurement?:Image
    Select the thirty-third image:CorrCycle09_A
    Multiply the thirty-third image by:1.0
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    Image or measurement?:Image
    Select the thirty-fourth image:CorrCycle09_C
    Multiply the thirty-fourth image by:1.0
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    Image or measurement?:Image
    Select the thirty-fifth image:CorrCycle09_G
    Multiply the thirty-fifth image by:1.0
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    Image or measurement?:Image
    Select the thirty-sixth image:CorrCycle09_T
    Multiply the thirty-sixth image by:1.0
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    Image or measurement?:Image
    Select the thirty-seventh image:CorrCycle10_A
    Multiply the thirty-seventh image by:1.0
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    Image or measurement?:Image
    Select the thirty-eighth image:CorrCycle10_C
    Multiply the thirty-eighth image by:1.0
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    Image or measurement?:Image
    Select the thirty-ninth image:CorrCycle10_G
    Multiply the thirty-ninth image by:1.0
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    Image or measurement?:Image
    Select the fortieth image:CorrCycle10_T
    Multiply the fortieth image by:1.0
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    Image or measurement?:Image
    Select the forty-first image:CorrCycle11_A
    Multiply the forty-first image by:1.0
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    Image or measurement?:Image
    Select the forty-second image:CorrCycle11_C
    Multiply the forty-second image by:1.0
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    Image or measurement?:Image
    Select the forty-third image:CorrCycle11_G
    Multiply the forty-third image by:1.0
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    Image or measurement?:Image
    Select the forty-fourth image:CorrCycle11_T
    Multiply the forty-fourth image by:1.0
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    Image or measurement?:Image
    Select the forty-fifth image:CorrCycle12_A
    Multiply the forty-fifth image by:1.0
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    Image or measurement?:Image
    Select the forty-sixth image:CorrCycle12_C
    Multiply the forty-sixth image by:1.0
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    Image or measurement?:Image
    Select the forty-seventh image:CorrCycle12_G
    Multiply the forty-seventh image by:1.0
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    Image or measurement?:Image
    Select the forty-eighth image:CorrCycle12_T
    Multiply the forty-eighth image by:1.0
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
EnhanceOrSuppressFeatures:[module_num:19|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
    Select the input image:MaxOfAllBackSubCycles
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:BarcodeFoci_PreMask
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Foci_PreMask
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MaskObjects:[module_num:22|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
    Select objects to be masked:BarcodeFoci_PreMask
    Name the masked objects:BarcodeFoci
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ConfluentRegions
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:23|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
    Select objects to be masked:Foci_PreMask
    Name the masked objects:Foci
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ConfluentRegions
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ResizeObjects:[module_num:24|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
    Select the input object:Foci
    Name the output object:Resize_Foci
    Method:Factor
    Factor:0.5
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
MeasureObjectIntensity:[module_num:25|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
    Hidden:48
    Select an image to measure:CorrCycle01_A
    Select an image to measure:CorrCycle01_C
    Select an image to measure:CorrCycle01_G
    Select an image to measure:CorrCycle01_T
    Select an image to measure:CorrCycle02_A
    Select an image to measure:CorrCycle02_C
    Select an image to measure:CorrCycle02_G
    Select an image to measure:CorrCycle02_T
    Select an image to measure:CorrCycle03_A
    Select an image to measure:CorrCycle03_C
    Select an image to measure:CorrCycle03_G
    Select an image to measure:CorrCycle03_T
    Select an image to measure:CorrCycle04_A
    Select an image to measure:CorrCycle04_C
    Select an image to measure:CorrCycle04_G
    Select an image to measure:CorrCycle04_T
    Select an image to measure:CorrCycle05_A
    Select an image to measure:CorrCycle05_C
    Select an image to measure:CorrCycle05_G
    Select an image to measure:CorrCycle05_T
    Select an image to measure:CorrCycle06_A
    Select an image to measure:CorrCycle06_C
    Select an image to measure:CorrCycle06_G
    Select an image to measure:CorrCycle06_T
    Select an image to measure:CorrCycle07_A
    Select an image to measure:CorrCycle07_C
    Select an image to measure:CorrCycle07_G
    Select an image to measure:CorrCycle07_T
    Select an image to measure:CorrCycle08_A
    Select an image to measure:CorrCycle08_C
    Select an image to measure:CorrCycle08_G
    Select an image to measure:CorrCycle08_T
    Select an image to measure:CorrCycle09_A
    Select an image to measure:CorrCycle09_C
    Select an image to measure:CorrCycle09_G
    Select an image to measure:CorrCycle09_T
    Select an image to measure:CorrCycle10_A
    Select an image to measure:CorrCycle10_C
    Select an image to measure:CorrCycle10_G
    Select an image to measure:CorrCycle10_T
    Select an image to measure:CorrCycle11_A
    Select an image to measure:CorrCycle11_C
    Select an image to measure:CorrCycle11_G
    Select an image to measure:CorrCycle11_T
    Select an image to measure:CorrCycle12_A
    Select an image to measure:CorrCycle12_C
    Select an image to measure:CorrCycle12_G
    Select an image to measure:CorrCycle12_T
    Select objects to measure:Foci

CallBarcodes:[module_num:26|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
    Number of cycles:12
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20190919_6W_CP074A
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:sgRNA
    Select the column with gene/transcript barcode names:sgRNA_name
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues

ImageMath:[module_num:27|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Barcodes_Barcodes
    Image or measurement?:Image
    Select the first image:Barcodes_IntValues
    Multiply the first image by:0.000015259021897
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    Image or measurement?:Image
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
ImageMath:[module_num:28|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Barcodes_Scores
    Image or measurement?:Image
    Select the first image:BarcodeScores_IntValues
    Multiply the first image by:0.000015259021897
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    Image or measurement?:Image
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
MeasureObjectIntensity:[module_num:29|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
    Hidden:2
    Select an image to measure:Barcodes_Scores
    Select an image to measure:Barcodes_Barcodes
    Select objects to measure:BarcodeFoci

MaskImage:[module_num:30|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
    Select the input image:Barcodes_IntValues
    Name the output image:MaskedBarcodes_IntValues
    Use objects or an image as a mask?:Objects
    Select object for mask:BarcodeFoci
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    Invert the mask?:No

MaskImage:[module_num:31|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
    Select the input image:Barcodes_Scores
    Name the output image:MaskedScores_IntValues
    Use objects or an image as a mask?:Objects
    Select object for mask:BarcodeFoci
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:32|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
    Select the input image:Mito
    Name the output image:mito_tubeness
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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
Threshold:[module_num:33|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
    Select the input image:mito_tubeness
    Name the output image:mito_bw
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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
MorphologicalSkeleton:[module_num:34|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
    Select the input image:mito_bw
    Name the output image:mito_skel

MeasureObjectSkeleton:[module_num:35|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
    Select the seed objects:Nuclei
    Select the skeletonized image:mito_skel
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectNeighbors:[module_num:36|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:37|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:38|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureColocalization:[module_num:39|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
    Hidden:6
    Hidden:3
    Select an image to measure:DAPI_Painting
    Select an image to measure:ConA
    Select an image to measure:Mito
    Select an image to measure:Phalloidin
    Select an image to measure:WGA
    Select an image to measure:DAPI_Barcodes
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Cells
    Select an object to measure:Cytoplasm
    Select an object to measure:Nuclei
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Coloalization coefficients?:No
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No

FlagImage:[module_num:40|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:PoorAlignment
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Average measurement for all objects in each image
    Select the object to be used for flagging:Nuclei
    Which measurement?:Correlation_Correlation_DAPI_Painting_DAPI_Barcodes
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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
MeasureObjectIntensity:[module_num:41|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
    Hidden:2
    Select an image to measure:MaskedBarcodes_IntValues
    Select an image to measure:MaskedScores_IntValues
    Select objects to measure:Cells

MeasureObjectIntensity:[module_num:42|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
    Hidden:5
    Select an image to measure:DAPI_Painting
    Select an image to measure:ConA
    Select an image to measure:Mito
    Select an image to measure:Phalloidin
    Select an image to measure:WGA
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:43|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
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Calculate the Zernike features?:Yes

MeasureObjectIntensityDistribution:[module_num:44|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
    Hidden:5
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:ConA
    Select an image to measure:DAPI_Painting
    Select an image to measure:Mito
    Select an image to measure:Phalloidin
    Select an image to measure:WGA
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensityDistribution:[module_num:45|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notes:['Mito measurements ', 'EDIT MAXIMUM RADIUS']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
    Hidden:1
    Hidden:2
    Hidden:2
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select an image to measure:mito_tubeness
    Select objects to measure:Cells
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Select objects to measure:Cytoplasm
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:16
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    Scale the bins?:No
    Number of bins:20
    Maximum radius:200
    Image:None
    Objects to display:Cytoplasm
    Number of bins:16
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:mito_radial_heatmap

MeasureGranularity:[module_num:46|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
    Image count:5
    Object count:1
    Select an image to measure:DAPI_Painting
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:ConA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:Mito
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:Phalloidin
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:WGA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

SaveImages:[module_num:47|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
    Select the type of image to save:Image
    Select the image to save:mito_radial_heatmap
    Select method for constructing file names:Single name
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    Enter single file name:mito_radial_heatmap_\g<Site>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|heatmap
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureImageQuality:[module_num:48|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureColocalization:[module_num:49|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
    Hidden:5
    Hidden:1
    Select an image to measure:Mito
    Select an image to measure:Phalloidin
    Select an image to measure:DAPI_Painting
    Select an image to measure:ConA
    Select an image to measure:WGA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Coloalization coefficients?:Yes
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No

MeasureColocalization:[module_num:50|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
    Hidden:41
    Hidden:1
    Select an image to measure:CorrCycle01_A
    Select an image to measure:CorrCycle01_C
    Select an image to measure:CorrCycle01_G
    Select an image to measure:CorrCycle01_T
    Select an image to measure:CorrCycle02_A
    Select an image to measure:CorrCycle02_C
    Select an image to measure:CorrCycle02_G
    Select an image to measure:CorrCycle02_T
    Select an image to measure:CorrCycle03_A
    Select an image to measure:CorrCycle03_C
    Select an image to measure:CorrCycle03_G
    Select an image to measure:CorrCycle03_T
    Select an image to measure:CorrCycle04_A
    Select an image to measure:CorrCycle04_C
    Select an image to measure:CorrCycle04_G
    Select an image to measure:CorrCycle04_T
    Select an image to measure:CorrCycle05_A
    Select an image to measure:CorrCycle05_C
    Select an image to measure:CorrCycle05_G
    Select an image to measure:CorrCycle05_T
    Select an image to measure:CorrCycle06_A
    Select an image to measure:CorrCycle06_C
    Select an image to measure:CorrCycle06_G
    Select an image to measure:CorrCycle06_T
    Select an image to measure:CorrCycle07_A
    Select an image to measure:CorrCycle07_C
    Select an image to measure:CorrCycle07_G
    Select an image to measure:CorrCycle07_T
    Select an image to measure:CorrCycle08_A
    Select an image to measure:CorrCycle08_C
    Select an image to measure:CorrCycle08_G
    Select an image to measure:CorrCycle08_T
    Select an image to measure:CorrCycle09_A
    Select an image to measure:CorrCycle09_C
    Select an image to measure:CorrCycle09_G
    Select an image to measure:CorrCycle09_T
    Select an image to measure:CorrCycle10_A
    Select an image to measure:CorrCycle10_C
    Select an image to measure:CorrCycle10_G
    Select an image to measure:CorrCycle10_T
    Select an image to measure:DAPI_Barcodes
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Coloalization coefficients?:No
    Calculate the Overlap coefficients?:No
    Calculate the Manders coefficients using Costes auto threshold?:No

RelateObjects:[module_num:51|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
    Parent objects:Cells
    Child objects:BarcodeFoci
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects
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
Resize:[module_num:52|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
    Select the input image:Phalloidin
    Name the output image:ResizePhalloidinForVis
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Resize:[module_num:53|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
    Select the input image:DAPI_Painting
    Name the output image:ResizeDAPIPaintingForVis
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

RescaleIntensity:[module_num:54|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
    Select the input image:ResizeDAPIPaintingForVis
    Name the output image:RescaleDAPIPaintingForVis
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:55|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
    Select the input image:ResizePhalloidinForVis
    Name the output image:RescalePhalloidinForVis
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:56|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
    Select a color scheme:RGB
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    Select the image to be colored green:RescalePhalloidinForVis
    Select the image to be colored blue:RescaleDAPIPaintingForVis
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:57|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:ResizeNuclei
    Select outline color:white
    Select objects to display:ResizeCells
    Select outline color:#80FFFF
    Select objects to display:Resize_Foci
    Select outline color:#FF8000
    Select objects to display:ResizeConfluent

SaveImages:[module_num:58|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Pre_DAPI_Painting
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:59|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:60|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:E:\
    Cluster root path:/home/ubuntu/bucket/projects/2018_11_20_Periscope_Calico/
    Local root path:C:\Users\Administrator\Desktop
    Cluster root path:/home/ubuntu/bucket/projects/2018_11_20_Periscope_Calico/workspace
