CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|Downloads
    Name of the file:load_data_pipeline2.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigProtein
    Name the output image:CorrProtein
    Select the illumination function:IllumProtein
    Select how the illumination function is applied:Divide
    Select the input image:OrigWGA
    Name the output image:CorrWGA
    Select the illumination function:IllumWGA
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:CorrMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:CorrER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:3|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
    Select the type of image to save:Image
    Select the image to save:CorrDNA
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrDNA
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:4|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
    Select the type of image to save:Image
    Select the image to save:CorrER
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrER
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:5|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
    Select the type of image to save:Image
    Select the image to save:CorrMito
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrMito
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:6|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
    Select the type of image to save:Image
    Select the image to save:CorrProtein
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrProtein
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:CorrWGA
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_CorrWGA
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<CycleFolder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:ConfluentRegions
    Typical diameter of objects, in pixel units (Min,Max):50,5000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:8
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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
MaskImage:[module_num:9|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
    Select the input image:CorrDNA
    Name the output image:MaskedDAPI
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

MaskImage:[module_num:10|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
    Select the input image:CorrMito
    Name the output image:MaskedMito
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

MaskImage:[module_num:11|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
    Select the input image:CorrER
    Name the output image:MaskedER
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:MaskedDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:8
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ImageMath:[module_num:13|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MaskedMitoPlusER
    Image or measurement?:Image
    Select the first image:MaskedMito
    Multiply the first image by:0.5
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    Image or measurement?:Image
    Select the second image:MaskedER
    Multiply the second image by:0.5
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
Smooth:[module_num:14|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
    Select the input image:MaskedMitoPlusER
    Name the output image:MitoPlusER_Smoothed
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
IdentifySecondaryObjects:[module_num:15|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:MitoPlusER_Smoothed
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    Regularization factor:0.01
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:PaintingIllumApplication_
    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:17|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:F:\
    Cluster root path:/home/ubuntu/bucket/projects/2018_11_20_Periscope_Calico/
