CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:100
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|Downloads
    Name of the file:load_data_pipeline7.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Site,Well
    Rescale intensities?:Yes

ImageMath:[module_num:2|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MeanOfAllACycles
    Image or measurement?:Image
    Select the first image:Cycle01_A
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle02_A
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle03_A
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle04_A
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle05_A
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle06_A
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle07_A
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle08_A
    Multiply the eighth image by:1.0
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
ImageMath:[module_num:3|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MeanOfAllCCycles
    Image or measurement?:Image
    Select the first image:Cycle01_C
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle02_C
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle03_C
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle04_C
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle05_C
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle06_C
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle07_C
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle08_C
    Multiply the eighth image by:1.0
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
ImageMath:[module_num:4|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MeanOfAllGCycles
    Image or measurement?:Image
    Select the first image:Cycle01_G
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle02_G
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle03_G
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle04_G
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle05_G
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle06_G
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle07_G
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle08_G
    Multiply the eighth image by:1.0
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
ImageMath:[module_num:5|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MeanOfAllTCycles
    Image or measurement?:Image
    Select the first image:Cycle01_T
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle02_T
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle03_T
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle04_T
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle05_T
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle06_T
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle07_T
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle08_T
    Multiply the eighth image by:1.0
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:MeanOfAllACycles
    Name the output image:IllumMeanA
    Select how the illumination function is calculated:Background
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    Block size:40
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:60
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:MeanOfAllCCycles
    Name the output image:IllumMeanC
    Select how the illumination function is calculated:Background
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    Block size:40
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:60
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:MeanOfAllGCycles
    Name the output image:IllumMeanG
    Select how the illumination function is calculated:Background
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    Block size:40
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:60
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:MeanOfAllTCycles
    Name the output image:IllumMeanT
    Select how the illumination function is calculated:Background
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    Block size:40
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:60
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:Cycle01_A
    Name the output image:Cycle01_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle02_A
    Name the output image:Cycle02_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle03_A
    Name the output image:Cycle03_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle04_A
    Name the output image:Cycle04_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle05_A
    Name the output image:Cycle05_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle06_A
    Name the output image:Cycle06_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle07_A
    Name the output image:Cycle07_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle08_A
    Name the output image:Cycle08_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:11|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
    Select the input image:Cycle01_C
    Name the output image:Cycle01_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle02_C
    Name the output image:Cycle02_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle03_C
    Name the output image:Cycle03_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle04_C
    Name the output image:Cycle04_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle05_C
    Name the output image:Cycle05_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle06_C
    Name the output image:Cycle06_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle07_C
    Name the output image:Cycle07_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle08_C
    Name the output image:Cycle08_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:12|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
    Select the input image:Cycle01_G
    Name the output image:Cycle01_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle02_G
    Name the output image:Cycle02_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle03_G
    Name the output image:Cycle03_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle04_G
    Name the output image:Cycle04_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle05_G
    Name the output image:Cycle05_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle06_G
    Name the output image:Cycle06_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle07_G
    Name the output image:Cycle07_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle08_G
    Name the output image:Cycle08_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:13|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
    Select the input image:Cycle01_T
    Name the output image:Cycle01_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle02_T
    Name the output image:Cycle02_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle03_T
    Name the output image:Cycle03_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle04_T
    Name the output image:Cycle04_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle05_T
    Name the output image:Cycle05_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle06_T
    Name the output image:Cycle06_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle07_T
    Name the output image:Cycle07_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle08_T
    Name the output image:Cycle08_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ImageMath:[module_num:14|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notes:['A bleeds bad into C, T bleeds bad into G, C and G don’t bleed too badly']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
    Operation:Maximum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MaxOfAllBackSubCycles
    Image or measurement?:Image
    Select the first image:Cycle01_A_BackSub
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle01_C_BackSub
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle01_G_BackSub
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle01_T_BackSub
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle02_A_BackSub
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle02_C_BackSub
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle02_G_BackSub
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle02_T_BackSub
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:Cycle03_A_BackSub
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:Cycle03_C_BackSub
    Multiply the tenth image by:1.0
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    Image or measurement?:Image
    Select the eleventh image:Cycle03_G_BackSub
    Multiply the eleventh image by:1.0
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    Image or measurement?:Image
    Select the twelfth image:Cycle03_T_BackSub
    Multiply the twelfth image by:1.0
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    Image or measurement?:Image
    Select the thirteenth image:Cycle04_A_BackSub
    Multiply the thirteenth image by:1.0
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    Image or measurement?:Image
    Select the fourteenth image:Cycle04_C_BackSub
    Multiply the fourteenth image by:1.0
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    Image or measurement?:Image
    Select the fifteenth image:Cycle04_G_BackSub
    Multiply the fifteenth image by:1.0
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    Image or measurement?:Image
    Select the sixteenth image:Cycle04_T_BackSub
    Multiply the sixteenth image by:1.0
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    Image or measurement?:Image
    Select the seventeenth image:Cycle05_A_BackSub
    Multiply the seventeenth image by:1.0
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    Image or measurement?:Image
    Select the eighteenth image:Cycle05_C_BackSub
    Multiply the eighteenth image by:1.0
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    Image or measurement?:Image
    Select the nineteenth image:Cycle05_G_BackSub
    Multiply the nineteenth image by:1.0
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    Image or measurement?:Image
    Select the twentieth image:Cycle05_T_BackSub
    Multiply the twentieth image by:1.0
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    Image or measurement?:Image
    Select the twenty-first image:Cycle06_A_BackSub
    Multiply the twenty-first image by:1.0
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    Image or measurement?:Image
    Select the twenty-second image:Cycle06_C_BackSub
    Multiply the twenty-second image by:1.0
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    Image or measurement?:Image
    Select the twenty-third image:Cycle06_G_BackSub
    Multiply the twenty-third image by:1.0
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    Image or measurement?:Image
    Select the twenty-fourth image:Cycle06_T_BackSub
    Multiply the twenty-fourth image by:1.0
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    Image or measurement?:Image
    Select the twenty-fifth image:Cycle07_A_BackSub
    Multiply the twenty-fifth image by:1.0
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    Image or measurement?:Image
    Select the twenty-sixth image:Cycle07_C_BackSub
    Multiply the twenty-sixth image by:1.0
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    Image or measurement?:Image
    Select the twenty-seventh image:Cycle07_G_BackSub
    Multiply the twenty-seventh image by:1.0
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    Image or measurement?:Image
    Select the twenty-eighth image:Cycle07_T_BackSub
    Multiply the twenty-eighth image by:1.0
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    Image or measurement?:Image
    Select the twenty-ninth image:Cycle08_A_BackSub
    Multiply the twenty-ninth image by:1.0
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    Image or measurement?:Image
    Select the thirtieth image:Cycle08_C_BackSub
    Multiply the thirtieth image by:1.0
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    Image or measurement?:Image
    Select the thirty-first image:Cycle08_G_BackSub
    Multiply the thirty-first image by:1.0
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    Image or measurement?:Image
    Select the thirty-second image:Cycle08_T_BackSub
    Multiply the thirty-second image by:1.0
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:Cycle01_DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):6,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:16|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cycle01_A
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:.9
    Lower and upper bounds on threshold:0.002,0.05
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
EnhanceOrSuppressFeatures:[module_num:17|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
    Select the input image:MaxOfAllBackSubCycles
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Foci
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0015,1.0
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    Lower outlier fraction:0.025
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4
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
IdentifyPrimaryObjects:[module_num:19|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:BarcodeFoci
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0015,1.0
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    Lower outlier fraction:0.025
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4
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
CompensateColors:[module_num:25|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle08_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:Yes, post-masking to objects
    What compensation class should serve as the template histogram?:4
    Should images be rescaled 0-1 after compensating?:No
    Should the images be divided by a scalar based on group percentiles:No
    What percentile should be used for multiplication:99.9
    Should the images have a tophat filter applied before correction?:No
    What size radius should be used for the tophat filter?:3
    Should the images have a Laplacian of Gaussian filter applied before correction?:Yes
    What size radius should be used for the LoG filter?:1
    Should the images have a Difference of Gaussians filter applied before correction?:No
    What size sigma should be used for the DoG low sigma?:3
    What size radius should be used for the DoG low sigma?:5

MeasureObjectIntensity:[module_num:26|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
    Select images to measure:CorrCycle01_A, CorrCycle01_C, CorrCycle01_G, CorrCycle01_T, CorrCycle02_A, CorrCycle02_C, CorrCycle02_G, CorrCycle02_T, CorrCycle03_A, CorrCycle03_C, CorrCycle03_G, CorrCycle03_T, CorrCycle04_A, CorrCycle04_C, CorrCycle04_G, CorrCycle04_T, CorrCycle05_A, CorrCycle05_C, CorrCycle05_G, CorrCycle05_T, CorrCycle06_A, CorrCycle06_C, CorrCycle06_G, CorrCycle06_T, CorrCycle07_A, CorrCycle07_C, CorrCycle07_G, CorrCycle07_T, CorrCycle08_A, CorrCycle08_C, CorrCycle08_G, CorrCycle08_T
    Select objects to measure:Foci

CallBarcodes:[module_num:27|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues

CompensateColors:[module_num:25|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle01_A_noBackSub
    Select an image to measure:Cycle02_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle02_A_noBackSub
    Select an image to measure:Cycle03_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle03_A_noBackSub
    Select an image to measure:Cycle04_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle04_A_noBackSub
    Select an image to measure:Cycle05_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle05_A_noBackSub
    Select an image to measure:Cycle06_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle06_A_noBackSub
    Select an image to measure:Cycle07_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle07_A_noBackSub
    Select an image to measure:Cycle08_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle08_A_noBackSub
    Select an image to measure:Cycle01_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle01_C_noBackSub
    Select an image to measure:Cycle02_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle02_C_noBackSub
    Select an image to measure:Cycle03_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle03_C_noBackSub
    Select an image to measure:Cycle04_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle04_C_noBackSub
    Select an image to measure:Cycle05_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle05_C_noBackSub
    Select an image to measure:Cycle06_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle06_C_noBackSub
    Select an image to measure:Cycle07_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle07_C_noBackSub
    Select an image to measure:Cycle08_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle08_C_noBackSub
    Select an image to measure:Cycle01_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle01_G_noBackSub
    Select an image to measure:Cycle02_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle02_G_noBackSub
    Select an image to measure:Cycle03_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle03_G_noBackSub
    Select an image to measure:Cycle04_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle04_G_noBackSub
    Select an image to measure:Cycle05_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle05_G_noBackSub
    Select an image to measure:Cycle06_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle06_G_noBackSub
    Select an image to measure:Cycle07_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle07_G_noBackSub
    Select an image to measure:Cycle08_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle08_G_noBackSub
    Select an image to measure:Cycle01_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle01_T_noBackSub
    Select an image to measure:Cycle02_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle02_T_noBackSub
    Select an image to measure:Cycle03_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle03_T_noBackSub
    Select an image to measure:Cycle04_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle04_T_noBackSub
    Select an image to measure:Cycle05_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle05_T_noBackSub
    Select an image to measure:Cycle06_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle06_T_noBackSub
    Select an image to measure:Cycle07_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle07_T_noBackSub
    Select an image to measure:Cycle08_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle08_T_noBackSub
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:Yes, post-masking to objects
    What compensation class should serve as the template histogram?:4
    Should images be rescaled 0-1 after compensating?:No
    Should the images be divided by a scalar based on group percentiles:No
    What percentile should be used for multiplication:99.9
    Should the images have a tophat filter applied before correction?:No
    What size radius should be used for the tophat filter?:3
    Should the images have a Laplacian of Gaussian filter applied before correction?:Yes
    What size radius should be used for the LoG filter?:1
    Should the images have a Difference of Gaussians filter applied before correction?:No
    What size sigma should be used for the DoG low sigma?:3
    What size radius should be used for the DoG low sigma?:5

MeasureObjectIntensity:[module_num:26|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
    Select images to measure:CorrCycle01_A_noBackSub, CorrCycle01_C_noBackSub, CorrCycle01_G_noBackSub, CorrCycle01_T_noBackSub, CorrCycle02_A_noBackSub, CorrCycle02_C_noBackSub, CorrCycle02_G_noBackSub, CorrCycle02_T_noBackSub, CorrCycle03_A_noBackSub, CorrCycle03_C_noBackSub, CorrCycle03_G_noBackSub, CorrCycle03_T_noBackSub, CorrCycle04_A_noBackSub, CorrCycle04_C_noBackSub, CorrCycle04_G_noBackSub, CorrCycle04_T_noBackSub, CorrCycle05_A_noBackSub, CorrCycle05_C_noBackSub, CorrCycle05_G_noBackSub, CorrCycle05_T_noBackSub, CorrCycle06_A_noBackSub, CorrCycle06_C_noBackSub, CorrCycle06_G_noBackSub, CorrCycle06_T_noBackSub,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
    Select objects to measure:Foci

CallBarcodes:[module_num:27|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_CorrCycle01_A_noBackSub
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_noBackSub

CompensateColors:[module_num:25|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle01_A_Rescale999_noBackSub
    Select an image to measure:Cycle02_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle02_A_Rescale999_noBackSub
    Select an image to measure:Cycle03_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle03_A_Rescale999_noBackSub
    Select an image to measure:Cycle04_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle04_A_Rescale999_noBackSub
    Select an image to measure:Cycle05_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle05_A_Rescale999_noBackSub
    Select an image to measure:Cycle06_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle06_A_Rescale999_noBackSub
    Select an image to measure:Cycle07_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle07_A_Rescale999_noBackSub
    Select an image to measure:Cycle08_A
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle08_A_Rescale999_noBackSub
    Select an image to measure:Cycle01_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle01_C_Rescale999_noBackSub
    Select an image to measure:Cycle02_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle02_C_Rescale999_noBackSub
    Select an image to measure:Cycle03_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle03_C_Rescale999_noBackSub
    Select an image to measure:Cycle04_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle04_C_Rescale999_noBackSub
    Select an image to measure:Cycle05_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle05_C_Rescale999_noBackSub
    Select an image to measure:Cycle06_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle06_C_Rescale999_noBackSub
    Select an image to measure:Cycle07_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle07_C_Rescale999_noBackSub
    Select an image to measure:Cycle08_C
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle08_C_Rescale999_noBackSub
    Select an image to measure:Cycle01_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle01_G_Rescale999_noBackSub
    Select an image to measure:Cycle02_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle02_G_Rescale999_noBackSub
    Select an image to measure:Cycle03_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle03_G_Rescale999_noBackSub
    Select an image to measure:Cycle04_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle04_G_Rescale999_noBackSub
    Select an image to measure:Cycle05_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle05_G_Rescale999_noBackSub
    Select an image to measure:Cycle06_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle06_G_Rescale999_noBackSub
    Select an image to measure:Cycle07_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle07_G_Rescale999_noBackSub
    Select an image to measure:Cycle08_G
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle08_G_Rescale999_noBackSub
    Select an image to measure:Cycle01_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle01_T_Rescale999_noBackSub
    Select an image to measure:Cycle02_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle02_T_Rescale999_noBackSub
    Select an image to measure:Cycle03_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle03_T_Rescale999_noBackSub
    Select an image to measure:Cycle04_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle04_T_Rescale999_noBackSub
    Select an image to measure:Cycle05_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle05_T_Rescale999_noBackSub
    Select an image to measure:Cycle06_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle06_T_Rescale999_noBackSub
    Select an image to measure:Cycle07_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle07_T_Rescale999_noBackSub
    Select an image to measure:Cycle08_T
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle08_T_Rescale999_noBackSub
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:Yes, post-masking to objects
    What compensation class should serve as the template histogram?:4
    Should images be rescaled 0-1 after compensating?:No
    Should the images be divided by a scalar based on group percentiles:Yes
    What percentile should be used for multiplication:99.9
    Should the images have a tophat filter applied before correction?:No
    What size radius should be used for the tophat filter?:3
    Should the images have a Laplacian of Gaussian filter applied before correction?:Yes
    What size radius should be used for the LoG filter?:1
    Should the images have a Difference of Gaussians filter applied before correction?:No
    What size sigma should be used for the DoG low sigma?:3
    What size radius should be used for the DoG low sigma?:5

MeasureObjectIntensity:[module_num:26|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
    Select images to measure:CorrCycle01_A_Rescale999_noBackSub, CorrCycle01_C_Rescale999_noBackSub, CorrCycle01_G_Rescale999_noBackSub, CorrCycle01_T_Rescale999_noBackSub, CorrCycle02_A_Rescale999_noBackSub, CorrCycle02_C_Rescale999_noBackSub, CorrCycle02_G_Rescale999_noBackSub, CorrCycle02_T_Rescale999_noBackSub, CorrCycle03_A_Rescale999_noBackSub, CorrCycle03_C_Rescale999_noBackSub, CorrCycle03_G_Rescale999_noBackSub, CorrCycle03_T_Rescale999_noBackSub, CorrCycle04_A_Rescale999_noBackSub, CorrCycle04_C_Rescale999_noBackSub, CorrCycle04_G_Rescale999_noBackSub, CorrCycle04_T_Rescale999_noBackSub,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
    Select objects to measure:Foci

CallBarcodes:[module_num:27|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_CorrCycle01_A_Rescale999_noBackSub
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_Rescale999_noBackSub

CompensateColors:[module_num:26|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_A_CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_A_CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_A_CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_A_CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_A_CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_A_CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_A_CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_A_CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_A_CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_A_CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_A_CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_A_CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_A_CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_A_CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_A_CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_A_CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_A_CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_A_CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_A_CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_A_CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_A_CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_A_CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_A_CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_A_CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_A_CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_A_CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_A_CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_A_CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_A_CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_A_CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_A_CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_A_CorrCycle08_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:Yes, pre-masking or on unmasked images
    What compensation class should serve as the template histogram?:1
    Should images be rescaled 0-1 after compensating?:No
    Should the images be divided by a scalar based on group percentiles:No
    What percentile should be used for multiplication:99

MeasureObjectIntensity:[module_num:27|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
    Select images to measure:HistogramPreMask_A_CorrCycle01_A, HistogramPreMask_A_CorrCycle01_C, HistogramPreMask_A_CorrCycle01_G, HistogramPreMask_A_CorrCycle01_T, HistogramPreMask_A_CorrCycle02_A, HistogramPreMask_A_CorrCycle02_C, HistogramPreMask_A_CorrCycle02_G, HistogramPreMask_A_CorrCycle02_T, HistogramPreMask_A_CorrCycle03_A, HistogramPreMask_A_CorrCycle03_C, HistogramPreMask_A_CorrCycle03_G, HistogramPreMask_A_CorrCycle03_T, HistogramPreMask_A_CorrCycle04_A, HistogramPreMask_A_CorrCycle04_C, HistogramPreMask_A_CorrCycle04_G, HistogramPreMask_A_CorrCycle04_T, HistogramPreMask_A_CorrCycle05_A,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
    Select objects to measure:Foci

CallBarcodes:[module_num:28|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_HistogramPreMask_A_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_HistogramPreMask_A

CompensateColors:[module_num:29|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_T_CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_T_CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_T_CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_T_CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_T_CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_T_CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_T_CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:HistogramPreMask_T_CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_T_CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_T_CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_T_CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_T_CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_T_CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_T_CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_T_CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:HistogramPreMask_T_CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_T_CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_T_CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_T_CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_T_CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_T_CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_T_CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_T_CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:HistogramPreMask_T_CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_T_CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_T_CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_T_CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_T_CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_T_CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_T_CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_T_CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:HistogramPreMask_T_CorrCycle08_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:Yes, pre-masking or on unmasked images
    What compensation class should serve as the template histogram?:4
    Should images be rescaled 0-1 after compensating?:No
    Should the images be divided by a scalar based on group percentiles:No
    What percentile should be used for multiplication:99

MeasureObjectIntensity:[module_num:30|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
    Select images to measure:HistogramPreMask_T_CorrCycle01_A, HistogramPreMask_T_CorrCycle01_C, HistogramPreMask_T_CorrCycle01_G, HistogramPreMask_T_CorrCycle01_T, HistogramPreMask_T_CorrCycle02_A, HistogramPreMask_T_CorrCycle02_C, HistogramPreMask_T_CorrCycle02_G, HistogramPreMask_T_CorrCycle02_T, HistogramPreMask_T_CorrCycle03_A, HistogramPreMask_T_CorrCycle03_C, HistogramPreMask_T_CorrCycle03_G, HistogramPreMask_T_CorrCycle03_T, HistogramPreMask_T_CorrCycle04_A, HistogramPreMask_T_CorrCycle04_C, HistogramPreMask_T_CorrCycle04_G, HistogramPreMask_T_CorrCycle04_T, HistogramPreMask_T_CorrCycle05_A,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
    Select objects to measure:Foci

CallBarcodes:[module_num:31|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_HistogramPreMask_T_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_HistogramPreMask_T

CompensateColors:[module_num:32|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescaleAfterMask_CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescaleAfterMask_CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescaleAfterMask_CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescaleAfterMask_CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescaleAfterMask_CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescaleAfterMask_CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescaleAfterMask_CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescaleAfterMask_CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescaleAfterMask_CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescaleAfterMask_CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescaleAfterMask_CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescaleAfterMask_CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescaleAfterMask_CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescaleAfterMask_CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescaleAfterMask_CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescaleAfterMask_CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescaleAfterMask_CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescaleAfterMask_CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescaleAfterMask_CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescaleAfterMask_CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescaleAfterMask_CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescaleAfterMask_CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescaleAfterMask_CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescaleAfterMask_CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescaleAfterMask_CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescaleAfterMask_CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescaleAfterMask_CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescaleAfterMask_CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescaleAfterMask_CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescaleAfterMask_CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescaleAfterMask_CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescaleAfterMask_CorrCycle08_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:Yes, per image
    Should histogram matching be performed between the image groups?:No
    What compensation class should serve as the template histogram?:1
    Should images be rescaled 0-1 after compensating?:No
    Should the images be divided by a scalar based on group percentiles:No
    What percentile should be used for multiplication:99

MeasureObjectIntensity:[module_num:33|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
    Select images to measure:RescaleAfterMask_CorrCycle01_A, RescaleAfterMask_CorrCycle01_C, RescaleAfterMask_CorrCycle01_G, RescaleAfterMask_CorrCycle01_T, RescaleAfterMask_CorrCycle02_A, RescaleAfterMask_CorrCycle02_C, RescaleAfterMask_CorrCycle02_G, RescaleAfterMask_CorrCycle02_T, RescaleAfterMask_CorrCycle03_A, RescaleAfterMask_CorrCycle03_C, RescaleAfterMask_CorrCycle03_G, RescaleAfterMask_CorrCycle03_T, RescaleAfterMask_CorrCycle04_A, RescaleAfterMask_CorrCycle04_C, RescaleAfterMask_CorrCycle04_G, RescaleAfterMask_CorrCycle04_T, RescaleAfterMask_CorrCycle05_A, RescaleAfterMask_CorrCycle05_C,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
    Select objects to measure:Foci

CallBarcodes:[module_num:34|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_RescaleAfterMask_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_RescaleAfterMask

CompensateColors:[module_num:35|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_A_CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_A_CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_A_CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_A_CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_A_CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_A_CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_A_CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_A_CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_A_CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_A_CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_A_CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_A_CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_A_CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_A_CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_A_CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_A_CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_A_CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_A_CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_A_CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_A_CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_A_CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_A_CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_A_CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_A_CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_A_CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_A_CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_A_CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_A_CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_A_CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_A_CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_A_CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_A_CorrCycle08_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:Yes, post-masking to objects
    What compensation class should serve as the template histogram?:1
    Should images be rescaled 0-1 after compensating?:No
    Should the images be divided by a scalar based on group percentiles:No
    What percentile should be used for multiplication:99

MeasureObjectIntensity:[module_num:36|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
    Select images to measure:MaskHistogram_A_CorrCycle01_A, MaskHistogram_A_CorrCycle01_C, MaskHistogram_A_CorrCycle01_G, MaskHistogram_A_CorrCycle01_T, MaskHistogram_A_CorrCycle02_A, MaskHistogram_A_CorrCycle02_C, MaskHistogram_A_CorrCycle02_G, MaskHistogram_A_CorrCycle02_T, MaskHistogram_A_CorrCycle03_A, MaskHistogram_A_CorrCycle03_C, MaskHistogram_A_CorrCycle03_G, MaskHistogram_A_CorrCycle03_T, MaskHistogram_A_CorrCycle04_A, MaskHistogram_A_CorrCycle04_C, MaskHistogram_A_CorrCycle04_G, MaskHistogram_A_CorrCycle04_T, MaskHistogram_A_CorrCycle05_A, MaskHistogram_A_CorrCycle05_C, MaskHistogram_A_CorrCycle05_G,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
    Select objects to measure:Foci

CallBarcodes:[module_num:37|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_MaskHistogram_A_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_MaskHistogram_A

CompensateColors:[module_num:38|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_T_CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_T_CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_T_CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_T_CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_T_CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_T_CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_T_CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistogram_T_CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_T_CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_T_CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_T_CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_T_CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_T_CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_T_CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_T_CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistogram_T_CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_T_CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_T_CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_T_CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_T_CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_T_CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_T_CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_T_CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistogram_T_CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_T_CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_T_CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_T_CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_T_CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_T_CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_T_CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_T_CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistogram_T_CorrCycle08_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:Yes, post-masking to objects
    What compensation class should serve as the template histogram?:4
    Should images be rescaled 0-1 after compensating?:No
    Should the images be divided by a scalar based on group percentiles:No
    What percentile should be used for multiplication:99

MeasureObjectIntensity:[module_num:39|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
    Select images to measure:MaskHistogram_T_CorrCycle01_A, MaskHistogram_T_CorrCycle01_C, MaskHistogram_T_CorrCycle01_G, MaskHistogram_T_CorrCycle01_T, MaskHistogram_T_CorrCycle02_A, MaskHistogram_T_CorrCycle02_C, MaskHistogram_T_CorrCycle02_G, MaskHistogram_T_CorrCycle02_T, MaskHistogram_T_CorrCycle03_A, MaskHistogram_T_CorrCycle03_C, MaskHistogram_T_CorrCycle03_G, MaskHistogram_T_CorrCycle03_T, MaskHistogram_T_CorrCycle04_A, MaskHistogram_T_CorrCycle04_C, MaskHistogram_T_CorrCycle04_G, MaskHistogram_T_CorrCycle04_T, MaskHistogram_T_CorrCycle05_A, MaskHistogram_T_CorrCycle05_C, MaskHistogram_T_CorrCycle05_G,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
    Select objects to measure:Foci

CallBarcodes:[module_num:40|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_MaskHistogram_T_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_MaskHistogram_T

CompensateColors:[module_num:41|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescalePostCompensate_CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescalePostCompensate_CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescalePostCompensate_CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescalePostCompensate_CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescalePostCompensate_CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescalePostCompensate_CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescalePostCompensate_CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:RescalePostCompensate_CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescalePostCompensate_CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescalePostCompensate_CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescalePostCompensate_CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescalePostCompensate_CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescalePostCompensate_CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescalePostCompensate_CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescalePostCompensate_CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:RescalePostCompensate_CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescalePostCompensate_CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescalePostCompensate_CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescalePostCompensate_CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescalePostCompensate_CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescalePostCompensate_CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescalePostCompensate_CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescalePostCompensate_CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:RescalePostCompensate_CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescalePostCompensate_CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescalePostCompensate_CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescalePostCompensate_CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescalePostCompensate_CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescalePostCompensate_CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescalePostCompensate_CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescalePostCompensate_CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:RescalePostCompensate_CorrCycle08_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:No
    What compensation class should serve as the template histogram?:1
    Should images be rescaled 0-1 after compensating?:Yes
    Should the images be divided by a scalar based on group percentiles:No
    What percentile should be used for multiplication:99

MeasureObjectIntensity:[module_num:42|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
    Select images to measure:RescalePostCompensate_CorrCycle01_A, RescalePostCompensate_CorrCycle01_C, RescalePostCompensate_CorrCycle01_G, RescalePostCompensate_CorrCycle01_T, RescalePostCompensate_CorrCycle02_A, RescalePostCompensate_CorrCycle02_C, RescalePostCompensate_CorrCycle02_G, RescalePostCompensate_CorrCycle02_T, RescalePostCompensate_CorrCycle03_A, RescalePostCompensate_CorrCycle03_C, RescalePostCompensate_CorrCycle03_G, RescalePostCompensate_CorrCycle03_T, RescalePostCompensate_CorrCycle04_A, RescalePostCompensate_CorrCycle04_C, RescalePostCompensate_CorrCycle04_G, RescalePostCompensate_CorrCycle04_T,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
    Select objects to measure:Foci

CallBarcodes:[module_num:43|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_RescalePostCompensate_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_RescalePostCompensate

CompensateColors:[module_num:44|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistARescale_CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistARescale_CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistARescale_CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistARescale_CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistARescale_CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistARescale_CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistARescale_CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:MaskHistARescale_CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistARescale_CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistARescale_CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistARescale_CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistARescale_CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistARescale_CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistARescale_CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistARescale_CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:MaskHistARescale_CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistARescale_CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistARescale_CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistARescale_CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistARescale_CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistARescale_CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistARescale_CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistARescale_CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:MaskHistARescale_CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistARescale_CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistARescale_CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistARescale_CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistARescale_CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistARescale_CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistARescale_CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistARescale_CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:MaskHistARescale_CorrCycle08_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:Yes, post-masking to objects
    What compensation class should serve as the template histogram?:1
    Should images be rescaled 0-1 after compensating?:Yes
    Should the images be divided by a scalar based on group percentiles:No
    What percentile should be used for multiplication:99.9

MeasureObjectIntensity:[module_num:45|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
    Select images to measure:MaskHistARescale_CorrCycle01_A, MaskHistARescale_CorrCycle01_C, MaskHistARescale_CorrCycle01_G, MaskHistARescale_CorrCycle01_T, MaskHistARescale_CorrCycle02_A, MaskHistARescale_CorrCycle02_C, MaskHistARescale_CorrCycle02_G, MaskHistARescale_CorrCycle02_T, MaskHistARescale_CorrCycle03_A, MaskHistARescale_CorrCycle03_C, MaskHistARescale_CorrCycle03_G, MaskHistARescale_CorrCycle03_T, MaskHistARescale_CorrCycle04_A, MaskHistARescale_CorrCycle04_C, MaskHistARescale_CorrCycle04_G, MaskHistARescale_CorrCycle04_T, MaskHistARescale_CorrCycle05_A, MaskHistARescale_CorrCycle05_C,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
    Select objects to measure:Foci

CallBarcodes:[module_num:46|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_MaskHistARescale_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_MaskHistARescale

CompensateColors:[module_num:47|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Rescale999_RescalePostCompensate_CorrCycle08_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:No
    What compensation class should serve as the template histogram?:1
    Should images be rescaled 0-1 after compensating?:Yes
    Should the images be divided by a scalar based on group percentiles:Yes
    What percentile should be used for multiplication:99.9

MeasureObjectIntensity:[module_num:48|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
    Select images to measure:Rescale999_RescalePostCompensate_CorrCycle01_A, Rescale999_RescalePostCompensate_CorrCycle01_C, Rescale999_RescalePostCompensate_CorrCycle01_G, Rescale999_RescalePostCompensate_CorrCycle01_T, Rescale999_RescalePostCompensate_CorrCycle02_A, Rescale999_RescalePostCompensate_CorrCycle02_C, Rescale999_RescalePostCompensate_CorrCycle02_G, Rescale999_RescalePostCompensate_CorrCycle02_T, Rescale999_RescalePostCompensate_CorrCycle03_A, Rescale999_RescalePostCompensate_CorrCycle03_C, Rescale999_RescalePostCompensate_CorrCycle03_G, Rescale999_RescalePostCompensate_CorrCycle03_T,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
    Select objects to measure:Foci

CallBarcodes:[module_num:49|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_Rescale999_RescalePostCompensate_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_Rescale999_RescalePostCompensate

CompensateColors:[module_num:50|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat4_RescalePostCompensate_CorrCycle08_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:No
    What compensation class should serve as the template histogram?:1
    Should images be rescaled 0-1 after compensating?:Yes
    Should the images be divided by a scalar based on group percentiles:Yes
    What percentile should be used for multiplication:99.9
    Should the images have a tophat filter applied before correction?:Yes
    What size radius should be used for the tophat filter?:4

MeasureObjectIntensity:[module_num:51|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
    Select images to measure:Tophat4_RescalePostCompensate_CorrCycle01_A, Tophat4_RescalePostCompensate_CorrCycle01_C, Tophat4_RescalePostCompensate_CorrCycle01_G, Tophat4_RescalePostCompensate_CorrCycle01_T, Tophat4_RescalePostCompensate_CorrCycle02_A, Tophat4_RescalePostCompensate_CorrCycle02_C, Tophat4_RescalePostCompensate_CorrCycle02_G, Tophat4_RescalePostCompensate_CorrCycle02_T, Tophat4_RescalePostCompensate_CorrCycle03_A, Tophat4_RescalePostCompensate_CorrCycle03_C, Tophat4_RescalePostCompensate_CorrCycle03_G, Tophat4_RescalePostCompensate_CorrCycle03_T, Tophat4_RescalePostCompensate_CorrCycle04_A,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
    Select objects to measure:Foci

CallBarcodes:[module_num:52|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_Tophat4_RescalePostCompensate_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_Tophat4_RescalePostCompensate

CompensateColors:[module_num:53|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:Tophat8_RescalePostCompensate_CorrCycle08_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:No
    What compensation class should serve as the template histogram?:1
    Should images be rescaled 0-1 after compensating?:Yes
    Should the images be divided by a scalar based on group percentiles:Yes
    What percentile should be used for multiplication:99.9
    Should the images have a tophat filter applied before correction?:Yes
    What size radius should be used for the tophat filter?:8

MeasureObjectIntensity:[module_num:54|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
    Select images to measure:Tophat8_RescalePostCompensate_CorrCycle01_A, Tophat8_RescalePostCompensate_CorrCycle01_C, Tophat8_RescalePostCompensate_CorrCycle01_G, Tophat8_RescalePostCompensate_CorrCycle01_T, Tophat8_RescalePostCompensate_CorrCycle02_A, Tophat8_RescalePostCompensate_CorrCycle02_C, Tophat8_RescalePostCompensate_CorrCycle02_G, Tophat8_RescalePostCompensate_CorrCycle02_T, Tophat8_RescalePostCompensate_CorrCycle03_A, Tophat8_RescalePostCompensate_CorrCycle03_C, Tophat8_RescalePostCompensate_CorrCycle03_G, Tophat8_RescalePostCompensate_CorrCycle03_T, Tophat8_RescalePostCompensate_CorrCycle04_A,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
    Select objects to measure:Foci

CallBarcodes:[module_num:55|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_Tophat8_RescalePostCompensate_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_Tophat8_RescalePostCompensate

CompensateColors:[module_num:59|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:LoG8_RescalePostCompensate_CorrCycle08_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:No
    What compensation class should serve as the template histogram?:1
    Should images be rescaled 0-1 after compensating?:Yes
    Should the images be divided by a scalar based on group percentiles:Yes
    What percentile should be used for multiplication:99.9
    Should the images have a Laplacian of Gaussian filter applied before correction?:Yes
    What size radius should be used for the LoG filter?:8

MeasureObjectIntensity:[module_num:60|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
    Select images to measure:LoG8_RescalePostCompensate_CorrCycle01_A, LoG8_RescalePostCompensate_CorrCycle01_C, LoG8_RescalePostCompensate_CorrCycle01_G, LoG8_RescalePostCompensate_CorrCycle01_T, LoG8_RescalePostCompensate_CorrCycle02_A, LoG8_RescalePostCompensate_CorrCycle02_C, LoG8_RescalePostCompensate_CorrCycle02_G, LoG8_RescalePostCompensate_CorrCycle02_T, LoG8_RescalePostCompensate_CorrCycle03_A, LoG8_RescalePostCompensate_CorrCycle03_C, LoG8_RescalePostCompensate_CorrCycle03_G, LoG8_RescalePostCompensate_CorrCycle03_T, LoG8_RescalePostCompensate_CorrCycle04_A, LoG8_RescalePostCompensate_CorrCycle04_C,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
    Select objects to measure:Foci

CallBarcodes:[module_num:61|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_LoG8_RescalePostCompensate_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_LoG8_RescalePostCompensate

CompensateColors:[module_num:62|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
    Hidden:32
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:DoG48_RescalePostCompensate_CorrCycle08_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:No
    What compensation class should serve as the template histogram?:1
    Should images be rescaled 0-1 after compensating?:Yes
    Should the images be divided by a scalar based on group percentiles:Yes
    What percentile should be used for multiplication:99.9
    Should the images have a Difference of Gaussians filter applied before correction?:Yes
    What size sigma should be used for the DoG low sigma?:4
    What size radius should be used for the DoG low sigma?:8

MeasureObjectIntensity:[module_num:63|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
    Select images to measure:DoG48_RescalePostCompensate_CorrCycle01_A, DoG48_RescalePostCompensate_CorrCycle01_C, DoG48_RescalePostCompensate_CorrCycle01_G, DoG48_RescalePostCompensate_CorrCycle01_T, DoG48_RescalePostCompensate_CorrCycle02_A, DoG48_RescalePostCompensate_CorrCycle02_C, DoG48_RescalePostCompensate_CorrCycle02_G, DoG48_RescalePostCompensate_CorrCycle02_T, DoG48_RescalePostCompensate_CorrCycle03_A, DoG48_RescalePostCompensate_CorrCycle03_C, DoG48_RescalePostCompensate_CorrCycle03_G, DoG48_RescalePostCompensate_CorrCycle03_T, DoG48_RescalePostCompensate_CorrCycle04_A,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
    Select objects to measure:Foci

CallBarcodes:[module_num:64|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
    Number of cycles:8
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_DoG48_RescalePostCompensate_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:Barcode
    Select the column with gene/transcript barcode names:Construct
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues_999
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues_DoG48_RescalePostCompensate

RelateObjects:[module_num:65|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
    Parent objects:Cells
    Child objects:Foci
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:66|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
    Select images to measure:BarcodeScores_IntValues, BarcodeScores_IntValues_noBackSub, BarcodeScores_IntValues_Rescale999_noBackSub, BarcodeScores_IntValues_HistogramPreMask_A, BarcodeScores_IntValues_HistogramPreMask_T, BarcodeScores_IntValues_MaskHistARescale, BarcodeScores_IntValues_MaskHistogram_A, BarcodeScores_IntValues_MaskHistogram_T, BarcodeScores_IntValues_RescaleAfterMask, BarcodeScores_IntValues_RescalePostCompensate, BarcodeScores_IntValues_RescalePreMask, BarcodeScores_IntValues_Rescale999_RescalePostCompensate, BarcodeScores_IntValues_Tophat4_RescalePostCompensate,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
    Select objects to measure:BarcodeFoci

ExportToSpreadsheet:[module_num:67|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:BarcodePreprocessing_
    Overwrite existing files without warning?:No
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
CalculateMath:[module_num:68|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
    Name the output measurement:Divide20
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Metadata_Site
    Multiply the above operand by:.05
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:Not rounded
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:69|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
    Name the output measurement:Divide20floor
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Metadata_Site
    Multiply the above operand by:.05
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Rounded down to the next-lowest integer
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    Constrain the result to a lower bound?:Not rounded
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:70|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
    Name the output measurement:Divide20diff
    Operation:Subtract
    Select the minuend measurement type:Image
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    Select the minuend measurement:Math_Divide20
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Image
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    Select the subtrahend measurement:Math_Divide20floor
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:Not rounded
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    Constrain the result to an upper bound?:No
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
FlagImage:[module_num:71|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
    Hidden:1
    Hidden:1
    Name the flag's category:Divide20
    Name the flag:Divide20Flag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Math_Divide20diff
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:.0000000001
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    Ignore flag skips on last cycle?:No

ImageMath:[module_num:72|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MaxSqRt
    Image or measurement?:Image
    Select the first image:MaxOfAllBackSubCycles
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:73|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
    Select the input image:MaxSqRt
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:74|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:Max_Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:Foci
    Select outline color:#0080FF
    Select objects to display:Cells

SaveImages:[module_num:75|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
    Select the type of image to save:Image
    Select the image to save:Max_Overlay
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Max_Overlay
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|../overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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