CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:70
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|/Users/bcimini/Downloads
    Name of the file:load_data_pipeline6_local.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Site,Well
    Rescale intensities?:Yes

MeasureImageQuality:[module_num:2|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
CorrectIlluminationApply:[module_num:3|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
    Select the input image:Cycle01_OrigDNA
    Name the output image:Cycle01_DAPI
    Select the illumination function:Cycle01_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle02_OrigDNA
    Name the output image:Cycle02_DAPI_PreAligned
    Select the illumination function:Cycle02_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle03_OrigDNA
    Name the output image:Cycle03_DAPI_PreAligned
    Select the illumination function:Cycle03_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle04_OrigDNA
    Name the output image:Cycle04_DAPI_PreAligned
    Select the illumination function:Cycle04_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle05_OrigDNA
    Name the output image:Cycle05_DAPI_PreAligned
    Select the illumination function:Cycle05_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle06_OrigDNA
    Name the output image:Cycle06_DAPI_PreAligned
    Select the illumination function:Cycle06_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle07_OrigDNA
    Name the output image:Cycle07_DAPI_PreAligned
    Select the illumination function:Cycle07_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle08_OrigDNA
    Name the output image:Cycle08_DAPI_PreAligned
    Select the illumination function:Cycle08_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle09_OrigDNA
    Name the output image:Cycle09_DAPI_PreAligned
    Select the illumination function:Cycle09_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle10_OrigDNA
    Name the output image:Cycle10_DAPI_PreAligned
    Select the illumination function:Cycle10_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle11_OrigDNA
    Name the output image:Cycle11_DAPI_PreAligned
    Select the illumination function:Cycle11_IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle12_OrigDNA
    Name the output image:Cycle12_DAPI_PreAligned
    Select the illumination function:Cycle12_IllumDNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:4|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
    Select the input image:Cycle01_OrigA
    Name the output image:Cycle01_A
    Select the illumination function:Cycle01_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle02_OrigA
    Name the output image:Cycle02_A_PreAligned
    Select the illumination function:Cycle02_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle03_OrigA
    Name the output image:Cycle03_A_PreAligned
    Select the illumination function:Cycle03_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle04_OrigA
    Name the output image:Cycle04_A_PreAligned
    Select the illumination function:Cycle04_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle05_OrigA
    Name the output image:Cycle05_A_PreAligned
    Select the illumination function:Cycle05_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle06_OrigA
    Name the output image:Cycle06_A_PreAligned
    Select the illumination function:Cycle06_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle07_OrigA
    Name the output image:Cycle07_A_PreAligned
    Select the illumination function:Cycle07_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle08_OrigA
    Name the output image:Cycle08_A_PreAligned
    Select the illumination function:Cycle08_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle09_OrigA
    Name the output image:Cycle09_A_PreAligned
    Select the illumination function:Cycle09_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle10_OrigA
    Name the output image:Cycle10_A_PreAligned
    Select the illumination function:Cycle10_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle11_OrigA
    Name the output image:Cycle11_A_PreAligned
    Select the illumination function:Cycle11_IllumA
    Select how the illumination function is applied:Divide
    Select the input image:Cycle12_OrigA
    Name the output image:Cycle12_A_PreAligned
    Select the illumination function:Cycle12_IllumA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:5|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
    Select the input image:Cycle01_OrigC
    Name the output image:Cycle01_C
    Select the illumination function:Cycle01_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle02_OrigC
    Name the output image:Cycle02_C_PreAligned
    Select the illumination function:Cycle02_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle03_OrigC
    Name the output image:Cycle03_C_PreAligned
    Select the illumination function:Cycle03_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle04_OrigC
    Name the output image:Cycle04_C_PreAligned
    Select the illumination function:Cycle04_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle05_OrigC
    Name the output image:Cycle05_C_PreAligned
    Select the illumination function:Cycle05_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle06_OrigC
    Name the output image:Cycle06_C_PreAligned
    Select the illumination function:Cycle06_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle07_OrigC
    Name the output image:Cycle07_C_PreAligned
    Select the illumination function:Cycle07_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle08_OrigC
    Name the output image:Cycle08_C_PreAligned
    Select the illumination function:Cycle08_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle09_OrigC
    Name the output image:Cycle09_C_PreAligned
    Select the illumination function:Cycle09_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle10_OrigC
    Name the output image:Cycle10_C_PreAligned
    Select the illumination function:Cycle10_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle11_OrigC
    Name the output image:Cycle11_C_PreAligned
    Select the illumination function:Cycle11_IllumC
    Select how the illumination function is applied:Divide
    Select the input image:Cycle12_OrigC
    Name the output image:Cycle12_C_PreAligned
    Select the illumination function:Cycle12_IllumC
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:6|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
    Select the input image:Cycle01_OrigG
    Name the output image:Cycle01_G
    Select the illumination function:Cycle01_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle02_OrigG
    Name the output image:Cycle02_G_PreAligned
    Select the illumination function:Cycle02_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle03_OrigG
    Name the output image:Cycle03_G_PreAligned
    Select the illumination function:Cycle03_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle04_OrigG
    Name the output image:Cycle04_G_PreAligned
    Select the illumination function:Cycle04_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle05_OrigG
    Name the output image:Cycle05_G_PreAligned
    Select the illumination function:Cycle05_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle06_OrigG
    Name the output image:Cycle06_G_PreAligned
    Select the illumination function:Cycle06_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle07_OrigG
    Name the output image:Cycle07_G_PreAligned
    Select the illumination function:Cycle07_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle08_OrigG
    Name the output image:Cycle08_G_PreAligned
    Select the illumination function:Cycle08_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle09_OrigG
    Name the output image:Cycle09_G_PreAligned
    Select the illumination function:Cycle09_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle10_OrigG
    Name the output image:Cycle10_G_PreAligned
    Select the illumination function:Cycle10_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle11_OrigG
    Name the output image:Cycle11_G_PreAligned
    Select the illumination function:Cycle11_IllumG
    Select how the illumination function is applied:Divide
    Select the input image:Cycle12_OrigG
    Name the output image:Cycle12_G_PreAligned
    Select the illumination function:Cycle12_IllumG
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:7|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
    Select the input image:Cycle01_OrigT
    Name the output image:Cycle01_T
    Select the illumination function:Cycle01_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle02_OrigT
    Name the output image:Cycle02_T_PreAligned
    Select the illumination function:Cycle02_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle03_OrigT
    Name the output image:Cycle03_T_PreAligned
    Select the illumination function:Cycle03_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle04_OrigT
    Name the output image:Cycle04_T_PreAligned
    Select the illumination function:Cycle04_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle05_OrigT
    Name the output image:Cycle05_T_PreAligned
    Select the illumination function:Cycle05_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle06_OrigT
    Name the output image:Cycle06_T_PreAligned
    Select the illumination function:Cycle06_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle07_OrigT
    Name the output image:Cycle07_T_PreAligned
    Select the illumination function:Cycle07_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle08_OrigT
    Name the output image:Cycle08_T_PreAligned
    Select the illumination function:Cycle08_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle09_OrigT
    Name the output image:Cycle09_T_PreAligned
    Select the illumination function:Cycle09_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle10_OrigT
    Name the output image:Cycle10_T_PreAligned
    Select the illumination function:Cycle10_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle11_OrigT
    Name the output image:Cycle11_T_PreAligned
    Select the illumination function:Cycle11_IllumT
    Select how the illumination function is applied:Divide
    Select the input image:Cycle12_OrigT
    Name the output image:Cycle12_T_PreAligned
    Select the illumination function:Cycle12_IllumT
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Align:[module_num:8|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle02_DAPI_PreAligned
    Name the second output image:Cycle02_DAPI
    Select the additional image:Cycle02_A_PreAligned
    Name the output image:Cycle02_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle02_C_PreAligned
    Name the output image:Cycle02_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle02_G_PreAligned
    Name the output image:Cycle02_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle02_T_PreAligned
    Name the output image:Cycle02_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:9|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle03_DAPI_PreAligned
    Name the second output image:Cycle03_DAPI
    Select the additional image:Cycle03_A_PreAligned
    Name the output image:Cycle03_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle03_C_PreAligned
    Name the output image:Cycle03_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle03_G_PreAligned
    Name the output image:Cycle03_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle03_T_PreAligned
    Name the output image:Cycle03_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:10|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle04_DAPI_PreAligned
    Name the second output image:Cycle04_DAPI
    Select the additional image:Cycle04_A_PreAligned
    Name the output image:Cycle04_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle04_C_PreAligned
    Name the output image:Cycle04_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle04_G_PreAligned
    Name the output image:Cycle04_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle04_T_PreAligned
    Name the output image:Cycle04_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:11|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle05_DAPI_PreAligned
    Name the second output image:Cycle05_DAPI
    Select the additional image:Cycle05_A_PreAligned
    Name the output image:Cycle05_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle05_C_PreAligned
    Name the output image:Cycle05_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle05_G_PreAligned
    Name the output image:Cycle05_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle05_T_PreAligned
    Name the output image:Cycle05_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:12|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle06_DAPI_PreAligned
    Name the second output image:Cycle06_DAPI
    Select the additional image:Cycle06_A_PreAligned
    Name the output image:Cycle06_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle06_C_PreAligned
    Name the output image:Cycle06_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle06_G_PreAligned
    Name the output image:Cycle06_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle06_T_PreAligned
    Name the output image:Cycle06_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:13|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle07_DAPI_PreAligned
    Name the second output image:Cycle07_DAPI
    Select the additional image:Cycle07_A_PreAligned
    Name the output image:Cycle07_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle07_C_PreAligned
    Name the output image:Cycle07_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle07_G_PreAligned
    Name the output image:Cycle07_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle07_T_PreAligned
    Name the output image:Cycle07_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:14|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle08_DAPI_PreAligned
    Name the second output image:Cycle08_DAPI
    Select the additional image:Cycle08_A_PreAligned
    Name the output image:Cycle08_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle08_C_PreAligned
    Name the output image:Cycle08_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle08_G_PreAligned
    Name the output image:Cycle08_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle08_T_PreAligned
    Name the output image:Cycle08_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:15|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle09_DAPI_PreAligned
    Name the second output image:Cycle09_DAPI
    Select the additional image:Cycle09_A_PreAligned
    Name the output image:Cycle09_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle09_C_PreAligned
    Name the output image:Cycle09_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle09_G_PreAligned
    Name the output image:Cycle09_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle09_T_PreAligned
    Name the output image:Cycle09_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:16|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle10_DAPI_PreAligned
    Name the second output image:Cycle10_DAPI
    Select the additional image:Cycle10_A_PreAligned
    Name the output image:Cycle10_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle10_C_PreAligned
    Name the output image:Cycle10_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle10_G_PreAligned
    Name the output image:Cycle10_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle10_T_PreAligned
    Name the output image:Cycle10_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:17|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle11_DAPI_PreAligned
    Name the second output image:Cycle11_DAPI
    Select the additional image:Cycle11_A_PreAligned
    Name the output image:Cycle11_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle11_C_PreAligned
    Name the output image:Cycle11_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle11_G_PreAligned
    Name the output image:Cycle11_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle11_T_PreAligned
    Name the output image:Cycle11_T
    Select how the alignment is to be applied:Similarly

Align:[module_num:18|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:Cycle01_DAPI
    Name the first output image:AlignedRed
    Select the second input image:Cycle12_DAPI_PreAligned
    Name the second output image:Cycle12_DAPI
    Select the additional image:Cycle12_A_PreAligned
    Name the output image:Cycle12_A
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle12_C_PreAligned
    Name the output image:Cycle12_C
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle12_G_PreAligned
    Name the output image:Cycle12_G
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cycle12_T_PreAligned
    Name the output image:Cycle12_T
    Select how the alignment is to be applied:Similarly

MeasureColocalization:[module_num:19|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
    Select images to measure:Cycle09_DAPI, Cycle11_T, Cycle01_A, Cycle11_DAPI, Cycle03_DAPI, Cycle06_A, Cycle06_T, Cycle10_C, Cycle10_G, Cycle11_C, Cycle06_C, Cycle04_DAPI, Cycle10_T, Cycle09_G, Cycle10_DAPI, Cycle01_C, Cycle02_C, Cycle02_T, Cycle03_C, Cycle04_C, Cycle05_T, Cycle09_T, Cycle07_T, Cycle05_G, Cycle11_G, Cycle09_A, Cycle03_A, Cycle01_DAPI, Cycle12_DAPI, Cycle03_T, Cycle04_A, Cycle02_G, Cycle03_G, Cycle06_DAPI, Cycle08_A, Cycle10_A, Cycle01_T, Cycle05_C, Cycle12_C, Cycle05_A, Cycle09_C, Cycle07_DAPI, Cycle04_G, Cycle11_A, Cycle01_G, Cycle04_T, Cycle08_T, Cycle08_DAPI, Cycle07_G, Cycle08_C, Cycle07_C,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
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Accurate

FlagImage:[module_num:20|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
    Hidden:1
    Hidden:11
    Name the flag's category:Metadata
    Name the flag:Unaligned
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle02_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle03_DAPI_Cycle01_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle04_DAPI_Cycle01_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle05_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle06_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle07_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle08_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle09_DAPI_Cycle01_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle10_DAPI_Cycle01_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle11_DAPI_Cycle01_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Correlation_Correlation_Cycle01_DAPI_Cycle12_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:Cycle01_DAPI
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_DAPI
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:Cycle01_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:Cycle01_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:Cycle01_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:Cycle01_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:Cycle02_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle02_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:Cycle02_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle02_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:Cycle02_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle02_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:Cycle02_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle02_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:Cycle03_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle03_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:Cycle03_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle03_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:Cycle03_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle03_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:Cycle03_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle03_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:Cycle04_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle04_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:Cycle04_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle04_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:Cycle04_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle04_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:Cycle04_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle04_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:Cycle05_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle05_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:Cycle05_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle05_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:Cycle05_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle05_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:Cycle05_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle05_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:Cycle06_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle06_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:Cycle06_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle06_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:Cycle06_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle06_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:Cycle06_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle06_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:46|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
    Select the type of image to save:Image
    Select the image to save:Cycle07_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle07_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:47|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
    Select the type of image to save:Image
    Select the image to save:Cycle07_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle07_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:48|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
    Select the type of image to save:Image
    Select the image to save:Cycle07_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle07_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:49|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
    Select the type of image to save:Image
    Select the image to save:Cycle07_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle07_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:Cycle08_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle08_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:Cycle08_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle08_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:Cycle08_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle08_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:53|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
    Select the type of image to save:Image
    Select the image to save:Cycle08_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle08_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:54|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
    Select the type of image to save:Image
    Select the image to save:Cycle09_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle09_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:55|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
    Select the type of image to save:Image
    Select the image to save:Cycle09_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle09_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:56|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
    Select the type of image to save:Image
    Select the image to save:Cycle09_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle09_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:57|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
    Select the type of image to save:Image
    Select the image to save:Cycle09_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle09_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:58|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
    Select the type of image to save:Image
    Select the image to save:Cycle10_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle10_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:59|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
    Select the type of image to save:Image
    Select the image to save:Cycle10_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle10_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:60|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
    Select the type of image to save:Image
    Select the image to save:Cycle10_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle10_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:61|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
    Select the type of image to save:Image
    Select the image to save:Cycle10_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle10_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:62|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
    Select the type of image to save:Image
    Select the image to save:Cycle11_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle11_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:63|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
    Select the type of image to save:Image
    Select the image to save:Cycle11_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle11_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:64|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
    Select the type of image to save:Image
    Select the image to save:Cycle11_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle11_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:65|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
    Select the type of image to save:Image
    Select the image to save:Cycle11_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle11_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:66|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
    Select the type of image to save:Image
    Select the image to save:Cycle12_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle12_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:67|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
    Select the type of image to save:Image
    Select the image to save:Cycle12_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle12_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:68|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
    Select the type of image to save:Image
    Select the image to save:Cycle12_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle12_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:69|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
    Select the type of image to save:Image
    Select the image to save:Cycle12_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle12_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:70|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:BarcodingApplication_
    Overwrite existing files without warning?:No
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