CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:73
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|
    Name of the file:load_data_pipeline9_local.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Site,Well
    Rescale intensities?:Yes

Align:[module_num:2|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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:DAPI_Barcodes
    Name the first output image:AlignedRed
    Select the second input image:Pre_DAPI_Painting
    Name the second output image:DAPI_Painting
    Select the additional image:Pre_ConA
    Name the output image:ConA
    Select how the alignment is to be applied:Similarly
    Select the additional image:Pre_Mito
    Name the output image:Mito
    Select how the alignment is to be applied:Similarly
    Select the additional image:Pre_Phalloidin
    Name the output image:Phalloidin
    Select how the alignment is to be applied:Similarly
    Select the additional image:Pre_WGA
    Name the output image:WGA
    Select how the alignment is to be applied:Similarly

IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:DAPI_Painting
    Name the primary objects to be identified:ConfluentRegions
    Typical diameter of objects, in pixel units (Min,Max):500,5000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureImageAreaOccupied:[module_num:4|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
    Measure the area occupied by:Objects
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    Select object sets to measure:ConfluentRegions

CalculateMath:[module_num:5|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
    Name the output measurement:PercentConfluent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_ConfluentRegions
    Multiply the above operand by:100.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_TotalArea_ConfluentRegions
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:Not rounded
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    Constrain the result to an upper bound?:No
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
MaskImage:[module_num:6|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
    Select the input image:DAPI_Painting
    Name the output image:MaskedDAPI_Painting
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

MaskImage:[module_num:7|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
    Select the input image:Phalloidin
    Name the output image:MaskedPhalloidin
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:MaskedDAPI_Painting
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:8
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:9|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notes:['Upper bound set on threshold based on site thresholds across the whole well from CP074A and CP074B']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:MaskedPhalloidin
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0808,1
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    Log transform before thresholding?:No
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
ResizeObjects:[module_num:10|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
    Select the input object:ConfluentRegions
    Name the output object:ResizeConfluent
    Method:Factor
    Factor:0.50
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
ResizeObjects:[module_num:11|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
    Select the input object:Nuclei
    Name the output object:ResizeNuclei
    Method:Factor
    Factor:0.5
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
ResizeObjects:[module_num:12|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
    Select the input object:Cells
    Name the output object:ResizeCells
    Method:Factor
    Factor:0.5
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
IdentifyTertiaryObjects:[module_num:13|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ImageMath:[module_num:14|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notes:['A bleeds bad into C, T bleeds bad into G, C and G don’t bleed too badly']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
    Operation:Maximum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MaxOfAllBackSubCycles
    Image or measurement?:Image
    Select the first image:CorrCycle01_A
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CorrCycle01_C
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:CorrCycle01_G
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:CorrCycle01_T
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:CorrCycle02_A
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:CorrCycle02_C
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:CorrCycle02_G
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:CorrCycle02_T
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:CorrCycle03_A
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:CorrCycle03_C
    Multiply the tenth image by:1.0
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    Image or measurement?:Image
    Select the eleventh image:CorrCycle03_G
    Multiply the eleventh image by:1.0
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    Image or measurement?:Image
    Select the twelfth image:CorrCycle03_T
    Multiply the twelfth image by:1.0
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    Image or measurement?:Image
    Select the thirteenth image:CorrCycle04_A
    Multiply the thirteenth image by:1.0
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    Image or measurement?:Image
    Select the fourteenth image:CorrCycle04_C
    Multiply the fourteenth image by:1.0
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    Image or measurement?:Image
    Select the fifteenth image:CorrCycle04_G
    Multiply the fifteenth image by:1.0
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    Image or measurement?:Image
    Select the sixteenth image:CorrCycle04_T
    Multiply the sixteenth image by:1.0
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    Image or measurement?:Image
    Select the seventeenth image:CorrCycle05_A
    Multiply the seventeenth image by:1.0
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    Image or measurement?:Image
    Select the eighteenth image:CorrCycle05_C
    Multiply the eighteenth image by:1.0
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    Image or measurement?:Image
    Select the nineteenth image:CorrCycle05_G
    Multiply the nineteenth image by:1.0
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    Image or measurement?:Image
    Select the twentieth image:CorrCycle05_T
    Multiply the twentieth image by:1.0
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    Image or measurement?:Image
    Select the twenty-first image:CorrCycle06_A
    Multiply the twenty-first image by:1.0
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    Image or measurement?:Image
    Select the twenty-second image:CorrCycle06_C
    Multiply the twenty-second image by:1.0
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    Image or measurement?:Image
    Select the twenty-third image:CorrCycle06_G
    Multiply the twenty-third image by:1.0
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    Image or measurement?:Image
    Select the twenty-fourth image:CorrCycle06_T
    Multiply the twenty-fourth image by:1.0
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    Image or measurement?:Image
    Select the twenty-fifth image:CorrCycle07_A
    Multiply the twenty-fifth image by:1.0
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    Image or measurement?:Image
    Select the twenty-sixth image:CorrCycle07_C
    Multiply the twenty-sixth image by:1.0
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    Image or measurement?:Image
    Select the twenty-seventh image:CorrCycle07_G
    Multiply the twenty-seventh image by:1.0
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    Image or measurement?:Image
    Select the twenty-eighth image:CorrCycle07_T
    Multiply the twenty-eighth image by:1.0
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    Image or measurement?:Image
    Select the twenty-ninth image:CorrCycle08_A
    Multiply the twenty-ninth image by:1.0
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    Image or measurement?:Image
    Select the thirtieth image:CorrCycle08_C
    Multiply the thirtieth image by:1.0
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    Image or measurement?:Image
    Select the thirty-first image:CorrCycle08_G
    Multiply the thirty-first image by:1.0
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    Image or measurement?:Image
    Select the thirty-second image:CorrCycle08_T
    Multiply the thirty-second image by:1.0
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    Image or measurement?:Image
    Select the thirty-third image:CorrCycle09_A
    Multiply the thirty-third image by:1.0
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    Image or measurement?:Image
    Select the thirty-fourth image:CorrCycle09_C
    Multiply the thirty-fourth image by:1.0
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    Image or measurement?:Image
    Select the thirty-fifth image:CorrCycle09_G
    Multiply the thirty-fifth image by:1.0
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    Image or measurement?:Image
    Select the thirty-sixth image:CorrCycle09_T
    Multiply the thirty-sixth image by:1.0
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    Image or measurement?:Image
    Select the thirty-seventh image:CorrCycle10_A
    Multiply the thirty-seventh image by:1.0
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    Image or measurement?:Image
    Select the thirty-eighth image:CorrCycle10_C
    Multiply the thirty-eighth image by:1.0
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    Image or measurement?:Image
    Select the thirty-ninth image:CorrCycle10_G
    Multiply the thirty-ninth image by:1.0
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    Image or measurement?:Image
    Select the fortieth image:CorrCycle10_T
    Multiply the fortieth image by:1.0
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
EnhanceOrSuppressFeatures:[module_num:15|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
    Select the input image:MaxOfAllBackSubCycles
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:BarcodeFoci_PreMask
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Foci_PreMask
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskObjects:[module_num:18|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
    Select objects to be masked:BarcodeFoci_PreMask
    Name the masked objects:BarcodeFoci
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ConfluentRegions
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:19|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
    Select objects to be masked:Foci_PreMask
    Name the masked objects:Foci
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ConfluentRegions
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ResizeObjects:[module_num:20|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
    Select the input object:Foci
    Name the output object:Resize_Foci
    Method:Factor
    Factor:0.5
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
OverlayOutlines:[module_num:21|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notes:['For use in identifying foci touching cell edges']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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlineImage
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

MeasureObjectIntensity:[module_num:22|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
    Select images to measure:CorrCycle01_A, CorrCycle01_C, CorrCycle01_G, CorrCycle01_T, CorrCycle02_A, CorrCycle02_C, CorrCycle02_G, CorrCycle02_T, CorrCycle03_A, CorrCycle03_C, CorrCycle03_G, CorrCycle03_T, CorrCycle04_A, CorrCycle04_C, CorrCycle04_G, CorrCycle04_T, CorrCycle05_A, CorrCycle05_C, CorrCycle05_G, CorrCycle05_T, CorrCycle06_A, CorrCycle06_C, CorrCycle06_G, CorrCycle06_T, CorrCycle07_A, CorrCycle07_C, CorrCycle07_G, CorrCycle07_T, CorrCycle08_A, CorrCycle08_C, CorrCycle08_G, CorrCycle08_T, CorrCycle09_A, CorrCycle09_C, CorrCycle09_G, CorrCycle09_T, CorrCycle10_A, CorrCycle10_C, CorrCycle10_G, CorrCycle10_T
    Select objects to measure:Foci

CallBarcodes:[module_num:23|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
    Number of cycles:12
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_CorrCycle01_A
    Input data file location:Elsewhere...|C:\Users\Administrator\Desktop\metadata\20200805_A549_WG_Screen
    Name of the file:Barcodes.csv
    Select the column of barcodes to match against:sgRNA
    Select the column with gene/transcript barcode names:gene_symbol
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues

ImageMath:[module_num:24|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Barcodes_Barcodes
    Image or measurement?:Image
    Select the first image:Barcodes_IntValues
    Multiply the first image by:0.000015259021897
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    Image or measurement?:Image
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
ImageMath:[module_num:25|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Barcodes_Scores
    Image or measurement?:Image
    Select the first image:BarcodeScores_IntValues
    Multiply the first image by:0.000015259021897
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    Image or measurement?:Image
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
MeasureObjectIntensity:[module_num:26|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
    Select images to measure:Barcodes_Scores, Barcodes_Barcodes, CellOutlineImage
    Select objects to measure:BarcodeFoci

MaskImage:[module_num:27|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
    Select the input image:Barcodes_IntValues
    Name the output image:MaskedBarcodes_IntValues
    Use objects or an image as a mask?:Objects
    Select object for mask:BarcodeFoci
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    Invert the mask?:No

MaskImage:[module_num:28|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
    Select the input image:Barcodes_Scores
    Name the output image:MaskedScores_IntValues
    Use objects or an image as a mask?:Objects
    Select object for mask:BarcodeFoci
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:29|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
    Select the input image:Mito
    Name the output image:mito_tubeness
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:30|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
    Select the input image:mito_tubeness
    Name the output image:mito_bw
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
MorphologicalSkeleton:[module_num:31|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
    Select the input image:mito_bw
    Name the output image:mito_skel

MeasureObjectSkeleton:[module_num:32|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
    Select the seed objects:Nuclei
    Select the skeletonized image:mito_skel
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectNeighbors:[module_num:33|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:34|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:35|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureColocalization:[module_num:36|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
    Select images to measure:WGA, Phalloidin, Mito, ConA, DAPI_Barcodes, DAPI_Painting
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cytoplasm, Cells, Nuclei
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Accurate

FlagImage:[module_num:37|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:PoorAlignment
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Average measurement for all objects in each image
    Select the object to be used for flagging:Nuclei
    Which measurement?:Correlation_Correlation_DAPI_Barcodes_DAPI_Painting
    Flag images based on low values?:Yes
    Minimum value:0.9
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

MeasureObjectIntensity:[module_num:38|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
    Select images to measure:MaskedBarcodes_IntValues, MaskedScores_IntValues
    Select objects to measure:Cells

MeasureObjectIntensity:[module_num:39|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
    Select images to measure:DAPI_Painting, ConA, Mito, Phalloidin, WGA
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureObjectSizeShape:[module_num:40|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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensityDistribution:[module_num:41|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
    Select images to measure:WGA, Phalloidin, Mito, ConA, DAPI_Painting
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensityDistribution:[module_num:42|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notes:['Mito measurements ', 'EDIT MAXIMUM RADIUS']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
    Select images to measure:mito_tubeness
    Hidden:2
    Hidden:2
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Select objects to measure:Cytoplasm
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:16
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    Scale the bins?:No
    Number of bins:20
    Maximum radius:200
    Image:None
    Objects to display:Cytoplasm
    Number of bins:16
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:mito_radial_heatmap

MeasureGranularity:[module_num:43|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
    Select images to measure:WGA, Phalloidin, Mito, ConA, DAPI_Painting
    Measure within objects?:Yes
    Select objects to measure:Cytoplasm, Cells, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureTexture:[module_num:44|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
    Select images to measure:ConA, DAPI_Painting, Mito, Phalloidin, WGA
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20

SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:mito_radial_heatmap
    Select method for constructing file names:Single name
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    Enter single file name:mito_radial_heatmap_\g<Site>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|heatmap
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureImageQuality:[module_num:46|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureColocalization:[module_num:47|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
    Select images to measure:WGA, Phalloidin, Mito, ConA, DAPI_Painting
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:Yes
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Accurate

MeasureColocalization:[module_num:48|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
    Select images to measure:CorrCycle06_A, CorrCycle09_C, CorrCycle10_C, CorrCycle09_G, CorrCycle02_A, CorrCycle03_C, CorrCycle10_G, CorrCycle07_T, CorrCycle03_T, DAPI_Barcodes, CorrCycle10_A, CorrCycle08_A, CorrCycle05_A, CorrCycle10_T, CorrCycle07_C, CorrCycle02_G, CorrCycle01_A, CorrCycle09_A, CorrCycle05_G, CorrCycle04_C, CorrCycle07_A, CorrCycle08_C, CorrCycle03_G, CorrCycle06_T, CorrCycle01_C, CorrCycle04_G, CorrCycle01_G, CorrCycle06_C, CorrCycle07_G, CorrCycle08_G, CorrCycle03_A, CorrCycle04_T, CorrCycle08_T, CorrCycle01_T, CorrCycle04_A, CorrCycle05_C, CorrCycle02_T, CorrCycle09_T, CorrCycle05_T, CorrCycle06_G,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
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:No
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Accurate

FilterObjects:[module_num:49|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
    Select the objects to filter:BarcodeFoci
    Name the output objects:Foci_Perfect
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MinIntensity_Barcodes_Scores
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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
ResizeObjects:[module_num:50|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
    Select the input object:Foci_Perfect
    Name the output object:Resize_Foci_Perfect
    Method:Factor
    Factor:0.5
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
FilterObjects:[module_num:51|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
    Select the objects to filter:Cells
    Name the output objects:Cells_Perfect
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MinIntensity_MaskedScores_IntValues
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_StdIntensity_MaskedBarcodes_IntValues
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.0

ResizeObjects:[module_num:52|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
    Select the input object:Cells_Perfect
    Name the output object:Resize_Cells_Perfect
    Method:Factor
    Factor:0.5
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
FilterObjects:[module_num:53|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
    Select the objects to filter:Cells
    Name the output objects:Cells_Great
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MinIntensity_MaskedScores_IntValues
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:.99999999
    Select the measurement to filter by:Intensity_StdIntensity_MaskedBarcodes_IntValues
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.0

ResizeObjects:[module_num:54|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
    Select the input object:Cells_Great
    Name the output object:Resize_Cells_Great
    Method:Factor
    Factor:0.5
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
FilterObjects:[module_num:55|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
    Select the objects to filter:Cells
    Name the output objects:Cells_None
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MaxIntensity_MaskedScores_IntValues
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.00000001

ResizeObjects:[module_num:56|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
    Select the input object:Cells_None
    Name the output object:Resize_Cells_None
    Method:Factor
    Factor:0.5
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
FilterObjects:[module_num:57|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notes:['Remove foci that are touching the cell edge']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
    Select the objects to filter:BarcodeFoci
    Name the output objects:Foci_NonCellEdge
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MaxIntensity_CellOutlineImage
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:.5

RelateObjects:[module_num:58|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
    Parent objects:Cells
    Child objects:BarcodeFoci
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects
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
Resize:[module_num:59|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
    Select the input image:Phalloidin
    Name the output image:ResizePhalloidinForVis
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Resize:[module_num:60|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
    Select the input image:DAPI_Painting
    Name the output image:ResizeDAPIPaintingForVis
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

RescaleIntensity:[module_num:61|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
    Select the input image:ResizeDAPIPaintingForVis
    Name the output image:RescaleDAPIPaintingForVis
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:62|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
    Select the input image:ResizePhalloidinForVis
    Name the output image:RescalePhalloidinForVis
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:63|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
    Select a color scheme:RGB
    Rescale intensity:No
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    Select the image to be colored green:RescalePhalloidinForVis
    Select the image to be colored blue:RescaleDAPIPaintingForVis
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:64|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:ResizeNuclei
    Select outline color:white
    Select objects to display:ResizeCells
    Select outline color:#80FFFF
    Select objects to display:Resize_Foci
    Select outline color:red
    Select objects to display:Resize_Cells_Perfect
    Select outline color:green
    Select objects to display:Resize_Foci_Perfect
    Select outline color:magenta
    Select objects to display:Resize_Cells_Great
    Select outline color:blue
    Select objects to display:Resize_Cells_None
    Select outline color:#FF8000
    Select objects to display:ResizeConfluent

SaveImages:[module_num:65|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:ColorImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Pre_DAPI_Painting
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Color
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:66|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Pre_DAPI_Painting
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:67|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
    Select the input objects:Cells
    Name the output image:Cells_Objects
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:68|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
    Select the input objects:Nuclei
    Name the output image:Nuclei_Objects
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:69|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
    Select the input objects:Cytoplasm
    Name the output image:Cytoplasm_Objects
    Select the color format:uint16
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
SaveImages:[module_num:70|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
    Select the type of image to save:Image
    Select the image to save:Cells_Objects
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well>_Site_\g<Site>_Cells_Objects
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|segmentation_masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:71|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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm_Objects
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well>_Site_\g<Site>_Cytoplasm_Objects
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|segmentation_masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:72|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_Objects
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well>_Site_\g<Site>_Nuclei_Objects
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|segmentation_masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:73|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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